<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MappingTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>600</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MappingTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimRate</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimDuration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>270</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ScreenExtentX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ScreenExtentY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NthPhotodiodeFlip</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicTexture</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.15</LocationX>
                    <LocationY>-0.85</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Mat">
              <rx:Name>SparseNoiseFrame</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>FlipPhotodiodeSquare</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>DrawSparseNoise</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenExtentX</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenExtentY</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicTexture</TextureName>
              <ExtentX>270</ExtentX>
              <ExtentY>90</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MakeSparseNoise</Name>
              <Description>Generates and draws a non-overlapping discrete sparse grid of randomly activated quads.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStep.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimRowsColumns</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rows" Selector="Item1" />
                      <Property Name="Columns" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimRowsColumns</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Size" Selector="Item1,Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimDuration</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimRate</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:SparseNoiseGenerator">
                      <p2:Rows>27</p2:Rows>
                      <p2:Columns>9</p2:Columns>
                      <p2:Duration>0.2</p2:Duration>
                      <p2:Rate>0.1</p2:Rate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertFromArray">
                      <dsp:Size>
                        <dsp:Width>27</dsp:Width>
                        <dsp:Height>9</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenExtentX</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenExtentY</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StimRowsColumns</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="11" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="11" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="12" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source5" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SparseNoiseFrame</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertToImage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicTexture</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MappingTime</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTime</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Step</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>FlipPhotodiodeSquare</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FlipPhotodiodeSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>PhotodiodeSquare</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NthPhotodiodeFlip</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Nth stim" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Nth stim</Name>
              <Description>True on stim 1, and every Nth stim thereafter (e..g if set to 10, [1,11,21...])</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Nth stim" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Mod" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MulticastSubject">
              <Name>PhotodiodeSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="18" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="26" Label="Source1" />
            <Edge From="23" To="28" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ListenForStop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SendStop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>stop</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>Emitter</osc:Connection>
              <osc:Address>/stop</osc:Address>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SavePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SparseNoiseFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinFile</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\LocalData\test\NoiseLocations.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>true</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:String,sys:String,sys:DateTimeOffset)">
              <rx:Name>WriteData</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SaveFormat</scr:Name>
              <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\LocalData\test\bonsai_events.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MappingTime</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>MappingTime</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimRate</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenExtentX</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenExtentY</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSize</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimRate</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimDuration</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ScreenExtentX</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ScreenExtentY</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NthPhotodiodeFlip</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>NthPhotodiodeFlip</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="29" Label="Source1" />
                  <Edge From="4" To="30" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="16" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="18" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="20" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="22" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="24" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="29" Label="Source2" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="29" Label="Source3" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="29" Label="Source4" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="29" Label="Source5" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="29" Label="Source6" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="28" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source7" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" />
              <Property Name="CsvName" />
              <Property Name="BinName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveInfo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SavePath" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\LocalData\test</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="CsvName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>bonsai_events.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CsvFile</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BinName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NoiseLocations.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>BinFile</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>