<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NTrials" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NTrials</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimDuration</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>11</Count>
              <RangeMin>1</RangeMin>
              <RangeMax>2</RangeMax>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>ITITimes</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LowFrequence" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LowFrequence</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Amplitude" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>270</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Amplitude</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1024</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <FaceSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.18</LocationX>
                    <LocationY>-0.95</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialITI</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimFrequence</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimOn</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardAmount" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardAmount</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InitDelay</Name>
              <Description>Delay when trial 0 initialized to give all other init processes time</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial&gt;0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateTrialStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>1</p1:Lower>
                <p1:Upper>3</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleDistinct">
                <p1:Count>3</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="Multiply">
                <Operand xsi:type="FloatProperty">
                  <Value>5000</Value>
                </Operand>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisplayStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawGratingSequence</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SourceName />
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeTimespan</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                      <gl:Period>PT0S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PickTrialITI</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ITITimes</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:Permutation" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeTimespan</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>PhotodiodeFlip</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:First" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimOn</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PhotodiodeSquare</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>-100</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>7900</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>8000</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>-200</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>7800</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>-300</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>7700</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>-400</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>7600</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>100</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>8100</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>200</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>8200</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>300</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>8300</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>400</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>44100</dsp:BufferLength>
                      <dsp:Frequency>8400</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>44100</dsp:SampleRate>
                      <dsp:Amplitude>270</dsp:Amplitude>
                      <dsp:Offset>0</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Sound</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>4000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimFrequence</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="97" Label="Source1" />
                  <Edge From="26" To="29" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="33" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="97" Label="Source2" />
                  <Edge From="34" To="37" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="42" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source2" />
                  <Edge From="42" To="97" Label="Source3" />
                  <Edge From="43" To="46" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source2" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="51" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source2" />
                  <Edge From="51" To="97" Label="Source4" />
                  <Edge From="52" To="55" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="55" Label="Source2" />
                  <Edge From="55" To="56" Label="Source1" />
                  <Edge From="56" To="57" Label="Source1" />
                  <Edge From="57" To="60" Label="Source1" />
                  <Edge From="58" To="59" Label="Source1" />
                  <Edge From="59" To="60" Label="Source2" />
                  <Edge From="60" To="97" Label="Source5" />
                  <Edge From="61" To="64" Label="Source1" />
                  <Edge From="62" To="63" Label="Source1" />
                  <Edge From="63" To="64" Label="Source2" />
                  <Edge From="64" To="65" Label="Source1" />
                  <Edge From="65" To="66" Label="Source1" />
                  <Edge From="66" To="69" Label="Source1" />
                  <Edge From="67" To="68" Label="Source1" />
                  <Edge From="68" To="69" Label="Source2" />
                  <Edge From="69" To="97" Label="Source6" />
                  <Edge From="70" To="73" Label="Source1" />
                  <Edge From="71" To="72" Label="Source1" />
                  <Edge From="72" To="73" Label="Source2" />
                  <Edge From="73" To="74" Label="Source1" />
                  <Edge From="74" To="75" Label="Source1" />
                  <Edge From="75" To="78" Label="Source1" />
                  <Edge From="76" To="77" Label="Source1" />
                  <Edge From="77" To="78" Label="Source2" />
                  <Edge From="78" To="97" Label="Source7" />
                  <Edge From="79" To="82" Label="Source1" />
                  <Edge From="80" To="81" Label="Source1" />
                  <Edge From="81" To="82" Label="Source2" />
                  <Edge From="82" To="83" Label="Source1" />
                  <Edge From="83" To="84" Label="Source1" />
                  <Edge From="84" To="87" Label="Source1" />
                  <Edge From="85" To="86" Label="Source1" />
                  <Edge From="86" To="87" Label="Source2" />
                  <Edge From="87" To="97" Label="Source8" />
                  <Edge From="88" To="91" Label="Source1" />
                  <Edge From="89" To="90" Label="Source1" />
                  <Edge From="90" To="91" Label="Source2" />
                  <Edge From="91" To="92" Label="Source1" />
                  <Edge From="92" To="93" Label="Source1" />
                  <Edge From="93" To="96" Label="Source1" />
                  <Edge From="94" To="95" Label="Source1" />
                  <Edge From="95" To="96" Label="Source2" />
                  <Edge From="96" To="97" Label="Source9" />
                  <Edge From="97" To="98" Label="Source1" />
                  <Edge From="98" To="99" Label="Source1" />
                  <Edge From="100" To="103" Label="Source1" />
                  <Edge From="101" To="102" Label="Source1" />
                  <Edge From="102" To="103" Label="Source2" />
                  <Edge From="103" To="104" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NTrials</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>50</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SendStop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>stop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>Emitter</osc:Connection>
                    <osc:Address>/stop</osc:Address>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SavePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:String,sys:String,sys:DateTimeOffset)">
              <rx:Name>WriteData</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SaveFormat</scr:Name>
              <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\peterslab\Desktop\bonsai_events.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITITimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NTrials</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>NTrials</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSize</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowFrequence</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>LowlFrequence</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimDuration</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITITimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Amplitude</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>Amplitude</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="28" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="28" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="28" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="28" Label="Source4" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="28" Label="Source5" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="28" Label="Source6" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="27" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source7" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveVariables</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimFrequence</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimFrequence</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOn</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialITI</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="12" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" />
              <Property Name="CsvName" />
              <Property Name="BinName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveInfo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SavePath" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\Users\peterslab\Desktop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="CsvName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>bonsai_events.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CsvFile</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BinName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NoiseLocations.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>BinFile</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>