WorkflowBuilder(Version=2.7.1)
GroupWorkflow SetParameters
    FloatProperty(Value=3)
    -> BehaviorSubject WheelGain

    ExternalizedMapping(RangeMin(DisplayName=ITIMin), RangeMax(DisplayName=ITIMax), Count(DisplayName=#ITIVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4, RangeMax=7, Count=31)
    -> ReplaySubject ITITimes(BufferSize=nil)

    ExternalizedMapping(RangeMin(DisplayName=QuiescenceMin), RangeMax(DisplayName=QuiescenceMax), Count(DisplayName=#QuiescenceVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.5, RangeMax=2, Count=16)
    -> ReplaySubject QuiescenceTimes(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=QuiescenceThreshold, Description="Visual degrees to reset quiescence timer"))
    -> FloatProperty(Value=2)
    -> BehaviorSubject QuiescenceThreshold

    FloatProperty(Value=40)
    -> BehaviorSubject Stim1Size

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=6)
    -> BehaviorSubject RewardAmount

    ExternalizedMapping(Count(DisplayName="TaskType Count"), RangeMin(DisplayName="TaskType 0"), RangeMax(DisplayName=TaskType1))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=2, RangeMax=3, Count=2)
    -> ReplaySubject TaskType(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=Error_repeat))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Error_repeat

    ExternalizedMapping(Value(DisplayName=ContinuoousCorrect))
    -> FloatProperty(Value=2)
    -> BehaviorSubject ContinuoousCorrect

    ExternalizedMapping(Value(DisplayName=Audio1))
    -> FloatProperty(Value=4000)
    -> BehaviorSubject Audio1

    ExternalizedMapping(Value(DisplayName=AudioAmplitude_set))
    -> FloatProperty(Value=470)
    -> BehaviorSubject AudioAmplitude_set

    ExternalizedMapping(Value(DisplayName=Audio2))
    -> FloatProperty(Value=12000)
    -> BehaviorSubject Audio2

    ExternalizedMapping(Value(DisplayName=AudioFreq2_set))
    -> FloatProperty(Value=4)
    -> BehaviorSubject AudioFreq2_set

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #1
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

Disable GroupWorkflow KeyboardControl(Description="Arrow keys for wheel control at desk")
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> FloatProperty(Value=20) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> FloatProperty(Value=-20) => #3
    #1, #3 -> Merge
    -> Multiply(Operand=FloatProperty(Value=0.1))
    -> PublishSubject Wheel

GroupWorkflow WheelControl(Description="Arrow keys for wheel control at desk")
    Bonsai.IO.CreateSerialPort
      Name=myArduino
      PortName=COM6
      BaudRate=250000
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=myArduino, NewLine=\n)
    -> Parse(Pattern=%i) => #2
    Defer deg/ticks => #3
      Description:
        Converts wheel degrees to screen degrees
        ticks: ticks/revolution for model rotary encoder
      Workflow
        FloatProperty(Value=360) => #0
        ExternalizedMapping(Value(DisplayName=Ticks))
        -> FloatProperty(Value=1024) => #2
        #0, #2 -> Zip
        -> Divide => #4
        SubscribeSubject WheelGain => #5
        #4, #5 -> Zip
        -> Multiply
        -> WorkflowOutput
    #2, #3 -> CombineLatest
    -> Multiply
    -> PublishSubject Wheel

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialQuiescence
    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Single> QuiescenceReset
    BehaviorSubject<System.Single> TrialStart
    BehaviorSubject<System.Single> ITIStart
    BehaviorSubject<System.Single> QuiescenceStart
    BehaviorSubject<System.Single> StimOn

    FloatProperty(Value=0)
    -> BehaviorSubject StimContrast

    GroupWorkflow CreateStim
        SubscribeSubject Draw => #0
        BehaviorSubject<System.Single> StimX1
        -> PropertyMapping(LocationX) => #2
        SubscribeSubject Stim1Size
        -> PropertyMapping(ExtentX, ExtentY) => #4
        SubscribeSubject StimSpatialFreq
        -> PropertyMapping(SpatialFrequency) => #6
        BehaviorSubject<System.Single> TrialStimPhase
        -> PropertyMapping(Phase) => #8
        SubscribeSubject StimContrast
        -> PropertyMapping(Opacity) => #10
        FloatProperty(Value=1)
        -> PropertyMapping(Contrast) => #12
        #0, #2, #4, #6, #8, #10, #12 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=180
          LocationY=0
          Layer=0
          Angle=0
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=20168.1152
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=0
          ExtentX=40
          ExtentY=40
        -> WorkflowOutput

        SubscribeSubject Draw => #15
        BehaviorSubject<System.Single> StimX2
        -> PropertyMapping(LocationX) => #17
        #15, #17 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawCheckerboard.bonsai
          NumberColumns=3
          NumberRows=3
          Phase=0
          ExtentX=40
          ExtentY=40
          LocationX=225
          LocationY=0
          Layer=0
          Angle=0

    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> ManualReward
    BehaviorSubject<System.Single> TrialType

    FloatProperty(Value=225)
    -> MulticastSubject StimX2

    FloatProperty(Value=1)
    -> BehaviorSubject Outcome

    BehaviorSubject<System.Single> lastTrialType

    FloatProperty(Value=0)
    -> BehaviorSubject CC

    GroupWorkflow AudioStim
        SubscribeSubject AudioAmplitude
        -> PropertyMapping(Amplitude) => #1
        SubscribeSubject AudioFrequency
        -> PropertyMapping(Frequency) => #3
        #1, #3 -> Bonsai.Dsp.FunctionGenerator(BufferLength=441, Frequency=4000, Waveform=Sine, SampleRate=44100, Amplitude=470, Offset=0, Phase=0) => #4
        SubscribeSubject AudioFreq2
        -> PropertyMapping(Frequency)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=441, Frequency=4, Waveform=Sine, SampleRate=44100, Amplitude=1, Offset=0, Phase=0) => #7
        #7, #4 -> Zip
        -> Multiply
        -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)

        FloatProperty(Value=0)
        -> BehaviorSubject AudioAmplitude

        FloatProperty(Value=0)
        -> BehaviorSubject AudioFrequency

        FloatProperty(Value=0)
        -> BehaviorSubject AudioFreq2

GroupWorkflow RewardValve
    SubscribeSubject RewardAmount => #0
    Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=54.17) => #4
    #0, #4 -> CombineLatest
    -> Multiply
    -> PropertyMapping(Value)
    -> IntProperty(Value=325)
    -> BehaviorSubject OpenValve

    GroupWorkflow ManualValve(Description="Press a key to manually open the valve")
        ExternalizedMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown => #1
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control
          SuppressRepetitions=false
        SubscribeSubject OpenValve
        -> PropertyMapping(Value) => #3
        #1, #3 -> IntProperty(Value=325)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString
          Expression: Convert.ToString(it)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> BooleanProperty(Value=true)
        -> MulticastSubject ManualReward
        -> WorkflowOutput

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> SelectMany InitDelay(Description="Delay when trial 0 initialized to give all other init processes time")
        WorkflowInput Source1 => #0
        -> Condition IsTrial0
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Delay(DueTime=PT3S) => #2
        #0 -> Condition IsTrial>0 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber
    -> WorkflowOutput
-> SelectMany PickTrialParams
    WorkflowInput Source1
    -> Sink PickTrialStimPhase
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=360)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject TrialStimPhase
        -> WorkflowOutput
    -> Sink PickTrialITI
        GroupWorkflow PickTrialITI
            SubscribeSubject ITITimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialITI
        -> WorkflowOutput
    -> Sink PickTrialQuiescence
        GroupWorkflow PickTrialQuiescence
            SubscribeSubject QuiescenceTimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialQuiescence
        -> WorkflowOutput
    -> Sink PickTaskType
        GroupWorkflow PickTrialTaskType
            SubscribeSubject Error_repeat => #0
            -> Equal(Operand=FloatProperty(Value=1))
            -> Condition RepeatError
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Pick_type => #3
                SubscribeSubject Outcome => #0
                -> Equal(Operand=FloatProperty(Value=1))
                -> Condition Correct
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany resample => #3
                    WorkflowInput Source1

                    SubscribeSubject CC => #1
                    -> GreaterThan(Operand=FloatProperty(Value=0))
                    -> Condition Correct
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany repeat => #4
                        SubscribeSubject lastTrialType
                        -> WorkflowOutput

                        WorkflowInput Source1
                    #1 -> Equal(Operand=FloatProperty(Value=0))
                    -> Condition Error
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany resample => #7
                        SubscribeSubject TaskType
                        -> Bonsai.Numerics.Permutation
                        -> Take(Count=1)
                        -> WorkflowOutput

                        WorkflowInput Source1
                    #7, #4 -> Amb
                    -> WorkflowOutput

                    Disable SubscribeSubject TaskType
                    -> Disable Bonsai.Numerics.Permutation
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput
                #0 -> Equal(Operand=FloatProperty(Value=0))
                -> Condition Error
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany repeat => #6
                    SubscribeSubject lastTrialType
                    -> WorkflowOutput

                    WorkflowInput Source1
                #3, #6 -> Amb
                -> WorkflowOutput

                SubscribeSubject CC => #9
                SubscribeSubject ContinuoousCorrect
                -> PropertyMapping(Value) => #11
                #9, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=2))
                -> Condition Error
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany resample
                    WorkflowInput Source1

                    FloatProperty(Value=0)
                    -> MulticastSubject CC
                    -> WorkflowOutput
            #0 -> Equal(Operand=FloatProperty(Value=0))
            -> Condition NoRepeatError
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Pick_type => #6
                SubscribeSubject TaskType
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput

                WorkflowInput Source1
            #3, #6 -> Amb
            -> WorkflowOutput
        -> MulticastSubject TrialType
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany ITI
    SubscribeSubject TrialITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT4.5S, Period=PT0S) => #3
    WorkflowInput Source1
    -> Sink ITIStartTimestamp => #5
        BooleanProperty(Value=true)
        -> MulticastSubject ITIStart
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput
-> SelectMany QuiescenceTimer => #9
    WorkflowInput Source1
    -> Sink QuiescenceStartTimestamp
        BooleanProperty(Value=true)
        -> MulticastSubject QuiescenceStart
        -> WorkflowOutput
    -> SelectMany RunQuiescenceTimer => #2
        SubscribeSubject Wheel => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SubscribeWhen
        -> Bonsai.Dsp.Abs
        -> Accumulate => #4
        SubscribeSubject QuiescenceThreshold
        -> PropertyMapping(Value) => #6
        #4, #6 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject QuiescenceReset
        -> Repeat => #10
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge
        -> WorkflowOutput
    SubscribeSubject TrialQuiescence
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #5
    #2, #5 -> Throttle(DueTime=PT1S)
    -> First
    -> WorkflowOutput
-> Condition LeftVisual
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=0) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany LeftStim => #11
    SubscribeSubject Wheel => #0
    WorkflowInput Source1
    -> FloatProperty(Value=0) => #2
    #2, #0 -> Merge
    -> Accumulate
    -> MulticastSubject StimX1
    -> Sink StimOn => #6
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject StimContrast
        -> MulticastSubject PhotodiodeSquare
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=45))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #9
    #6 -> LessThanOrEqual(Operand=FloatProperty(Value=-90))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #12
    #9, #12 -> Amb
    -> First
    -> WorkflowOutput

    FloatProperty(Value=0)
    -> MulticastSubject lastTrialType
#9 -> Condition RightVisual
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=1) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany RightStim => #13
    WorkflowInput Source1
    -> FloatProperty(Value=0) => #1
    SubscribeSubject Wheel
    -> Multiply(Operand=FloatProperty(Value=3)) => #3
    #1, #3 -> Merge
    -> Accumulate
    -> MulticastSubject StimX2
    -> Sink StimOn => #7
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=180)
        -> MulticastSubject StimX2
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=90))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #10
    #7 -> LessThanOrEqual(Operand=FloatProperty(Value=-45))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #13
    #10, #13 -> Amb
    -> First
    -> WorkflowOutput

    FloatProperty(Value=1)
    -> MulticastSubject lastTrialType
#9 -> Condition audio
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=2) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany LeftAudio => #15
    WorkflowInput Source1 => #0
    SubscribeSubject AudioFreq2_set
    -> PropertyMapping(Value) => #2
    #0, #2 -> FloatProperty(Value=4) => #3
    SubscribeSubject Wheel
    -> Multiply(Operand=FloatProperty(Value=-0.04)) => #5
    #3, #5 -> Merge
    -> Accumulate
    -> MulticastSubject AudioFreq2
    -> Sink StimOn => #9
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=180)
        -> MulticastSubject StimX1
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=8))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #12
    #9 -> LessThanOrEqual(Operand=FloatProperty(Value=0))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #15
    #12, #15 -> Amb
    -> First
    -> WorkflowOutput

    SubscribeSubject Audio1
    -> MulticastSubject AudioFrequency

    SubscribeSubject AudioAmplitude_set
    -> MulticastSubject AudioAmplitude

    FloatProperty(Value=2)
    -> MulticastSubject lastTrialType
#9 -> Condition audio
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=3) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany RightAudio => #17
    WorkflowInput Source1 => #0
    SubscribeSubject Wheel
    -> Multiply(Operand=FloatProperty(Value=0.04)) => #2
    SubscribeSubject AudioFreq2_set
    -> PropertyMapping(Value) => #4
    #0, #4 -> FloatProperty(Value=4) => #5
    #5, #2 -> Merge
    -> Accumulate
    -> MulticastSubject AudioFreq2
    -> Sink StimOn => #9
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=180)
        -> MulticastSubject StimX1
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=8))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #12
    #9 -> LessThanOrEqual(Operand=FloatProperty(Value=0))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #15
    #12, #15 -> Amb
    -> First
    -> WorkflowOutput

    FloatProperty(Value=470)
    -> MulticastSubject AudioAmplitude

    SubscribeSubject Audio2
    -> MulticastSubject AudioFrequency

    FloatProperty(Value=3)
    -> MulticastSubject lastTrialType
#11, #13, #15, #17 -> Merge => #18
-> Condition Hit
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Reward => #20
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare
        -> MulticastSubject AudioAmplitude

        IntProperty(Value=200)
        -> MulticastSubject StimX1
        -> MulticastSubject StimX2
    -> Sink OpenValve
        SubscribeSubject OpenValve
        -> Bonsai.Scripting.IronPython.PythonTransform MakeString
          Script:
            @returns(str)
            def process(value):
              return str.format("{0}", value)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> WorkflowOutput
    -> WorkflowOutput

    SubscribeSubject CC
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject CC
#18 -> Condition Miss
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> SelectMany Punish => #22
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare
        -> MulticastSubject AudioAmplitude

        IntProperty(Value=200)
        -> MulticastSubject StimX2
        -> MulticastSubject StimX1
    -> WorkflowOutput

    FloatProperty(Value=0)
    -> MulticastSubject CC
#20, #22 -> Merge
-> Repeat
-> GroupWorkflow Stop
    WorkflowInput Source1 => #0
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver) => #1
    #0, #1 -> TakeUntil
    -> TakeLast(Count=1)
    -> StringProperty(Value=stop)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject QuiescenceTimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceTimes) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceThreshold
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceThreshold) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject Stim1Size
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject WheelGain
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WheelGain) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject RewardAmount
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardAmount) => #26
        #25, #26 -> WithLatestFrom => #27
        IntProperty(Value=0) => #28
        SubscribeSubject Error_repeat
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #30
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ErrorRepeat) => #31
        #30, #31 -> WithLatestFrom => #32
        FloatProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #34
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=GratingCircle_Left) => #35
        #34, #35 -> WithLatestFrom => #36
        FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #38
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=CheckboardSquare_Right) => #39
        #38, #39 -> WithLatestFrom => #40
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ContinuoousCorrect) => #41
        SubscribeSubject ContinuoousCorrect
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #43
          Expression: Convert.ToString(it)
        #43, #41 -> WithLatestFrom => #44
        FloatProperty(Value=2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #46
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=A4KHz) => #47
        #46, #47 -> WithLatestFrom => #48
        FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #50
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=A12KHz) => #51
        #50, #51 -> WithLatestFrom => #52
        #3, #7, #11, #15, #19, #23, #27, #32, #36, #40, #44, #48, #52 -> Merge => #53
        #53, #28 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject TrialQuiescence
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialQuiescence) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceReset
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceReset) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Outcome) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStart) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject ITIStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIStart) => #26
        #25, #26 -> WithLatestFrom => #27
        SubscribeSubject QuiescenceStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #29
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceStart) => #30
        #29, #30 -> WithLatestFrom => #31
        SubscribeSubject TrialStimPhase
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #33
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStimPhase) => #34
        #33, #34 -> WithLatestFrom => #35
        SubscribeSubject ManualReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #37
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ManualReward) => #38
        #37, #38 -> WithLatestFrom => #39
        SubscribeSubject TrialNumber => #40
        SubscribeSubject TrialType
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #42
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TaskType) => #43
        #42, #43 -> WithLatestFrom => #44
        #3, #7, #11, #15, #19, #23, #27, #31, #35, #39, #44 -> Merge => #45
        #45, #40 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        SubscribeSubject SavePath => #3
        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        SubscribeSubject SavePath => #9
        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

GroupWorkflow TotalWater(Description="Cumulative water given during task (just for human readout)")
    SubscribeSubject Outcome
    -> Accumulate => #1
    SubscribeSubject RewardAmount => #2
    #1, #2 -> WithLatestFrom
    -> Multiply
    -> Add(Operand=FloatProperty(Value=-6))
    -> WorkflowOutput

SubscribeSubject Outcome
SubscribeSubject TrialType
SubscribeSubject CC
