WorkflowBuilder(Version=2.7.1)
GroupWorkflow SetParameters
    ExternalizedMapping(Value(DisplayName=NTrials))
    -> IntProperty(Value=80)
    -> BehaviorSubject NTrials

    FloatProperty(Value=20)
    -> BehaviorSubject StimSize

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=StimDuration))
    -> FloatProperty(Value=0.5)
    -> BehaviorSubject StimDuration

    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=2, Count=11)
    -> ReplaySubject ITITimes(BufferSize=nil)

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #1
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Single> PictureID
    BehaviorSubject<System.Single> StimOn
    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> randomNumber

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=5)
    -> BehaviorSubject RewardAmount

    FloatProperty(Value=1)
    -> BehaviorSubject PictureScaleY

    GroupWorkflow CreateStim
        SubscribeSubject Draw => #0
        BehaviorSubject<System.Single> StimX1
        -> PropertyMapping(LocationX) => #2
        BehaviorSubject<System.Single> TrialStimPhase
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #0, #2, #4 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=200, LocationY=0, Layer=0, Diameter=40, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> WorkflowOutput

        SubscribeSubject Draw => #7
        BehaviorSubject<System.Single> StimX2
        -> PropertyMapping(LocationX) => #9
        BehaviorSubject<System.Single> SquarePhase
        -> PropertyMapping(ColorR, ColorG, ColorB) => #11
        #7, #9, #11 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=40
          ExtentY=40
          LocationX=200
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> SelectMany InitDelay(Description="Delay when trial 0 initialized to give all other init processes time")
        WorkflowInput Source1 => #0
        -> Condition IsTrial0
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Delay(DueTime=PT3S) => #2
        #0 -> Condition IsTrial>0 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber
    -> WorkflowOutput

    FloatProperty(Value=180)
    -> MulticastSubject StimX1

    FloatProperty(Value=180)
    -> MulticastSubject StimX2
-> GroupWorkflow CreateTrialStim
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=6)
    -> Bonsai.Numerics.Distributions.SampleDistinct(Count=6) => #1
    WorkflowInput Source1 => #2
    #1, #2 -> SubscribeWhen
    -> WorkflowOutput
-> GroupWorkflow DisplayStim => #5
    WorkflowInput Source1
    -> CreateObservable DrawGratingSequence
        WorkflowInput Source1 => #0
        -> Condition WhiteCircle
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=1) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany WhiteCircle => #2
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.4S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1
                -> FloatProperty(Value=0)
                -> MulticastSubject StimX1
                -> WorkflowOutput

                FloatProperty(Value=1)
                -> MulticastSubject TrialStimPhase
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #0 -> Condition BlackSquare
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=2) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany BlackSquare => #4
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.6S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=0)
                -> MulticastSubject StimX2
                -> WorkflowOutput
                #0 -> FloatProperty(Value=0)
                -> MulticastSubject SquarePhase
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #0 -> Condition WhiteCircle
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=3) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany WhiteCircle => #6
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.6S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=0.6667)
                -> MulticastSubject TrialStimPhase
                #0 -> FloatProperty(Value=0)
                -> MulticastSubject StimX1
                -> WorkflowOutput
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #0 -> Condition WhiteCircle
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=4) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany WhiteCircle => #8
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.4S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=0.8333)
                -> MulticastSubject TrialStimPhase
                #0 -> FloatProperty(Value=0)
                -> MulticastSubject StimX1
                -> WorkflowOutput
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #0 -> Condition BlackSquare
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=5) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany BlackSquare => #10
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=0)
                -> MulticastSubject StimX2
                -> WorkflowOutput
                #0 -> FloatProperty(Value=0.333)
                -> MulticastSubject SquarePhase
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #0 -> Condition BlackSquare
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=TrialType))
            -> FloatProperty(Value=6) => #2
            #0, #2 -> WithLatestFrom
            -> Equal
            -> First
            -> WorkflowOutput
        -> SelectMany BlackSquare => #12
            GroupWorkflow PickTrialITI
                SubscribeSubject ITITimes
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject TrialITI
            -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1.1S) => #4
            SubscribeSubject StimDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            GroupWorkflow => #9
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=0)
                -> MulticastSubject StimX2
                -> WorkflowOutput
                #0 -> FloatProperty(Value=0.167)
                -> MulticastSubject SquarePhase
            #9, #8 -> TakeUntil
            -> Sink PhotodiodeFlip => #11
                WorkflowInput Source1 => #0
                -> First
                -> IntProperty(Value=1) => #2
                #0 -> Last
                -> IntProperty(Value=0) => #4
                #2, #4 -> Merge
                -> MulticastSubject StimOn
                -> MulticastSubject PhotodiodeSquare
                -> WorkflowOutput
            #11, #4 -> SubscribeWhen
            -> WorkflowOutput

            WorkflowInput Source1
            -> MulticastSubject PictureID
        #2, #4, #6, #8, #10, #12 -> Merge
        -> Sink StimOff
            IntProperty(Value=200)
            -> MulticastSubject StimX1
            -> MulticastSubject StimX2
        -> WorkflowOutput
    -> Concat
    -> WorkflowOutput
SubscribeSubject NTrials
-> PropertyMapping(Count) => #7
#5, #7 -> RepeatCount(Count=80)
-> Last
-> SelectMany EndDelay
    ExternalizedMapping(DueTime)
    -> Timer(DueTime=PT5S, Period=PT0S) => #1
    WorkflowInput Source1 => #2
    #1, #2 -> SubscribeWhen
    -> BooleanProperty(Value=true)
    -> WorkflowOutput
-> GroupWorkflow Stop
    WorkflowInput Source1 => #0
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver)
    -> BooleanProperty(Value=false) => #2
    #0, #2 -> Amb
    -> First
    -> Sink SendStop
        WorkflowInput Source1
        -> StringProperty(Value=stop)
        -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject NTrials
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=NTrials) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject StimSize
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject StimDuration
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimDuration) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #22
        #21, #22 -> WithLatestFrom => #23
        IntProperty(Value=0) => #24
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WhiteCircle) => #25
        FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #27
          Expression: Convert.ToString(it)
        #27, #25 -> WithLatestFrom => #28
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=BlackSquare) => #29
        FloatProperty(Value=2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #31
          Expression: Convert.ToString(it)
        #31, #29 -> WithLatestFrom => #32
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Gratings) => #33
        FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #35
          Expression: Convert.ToString(it)
        #35, #33 -> WithLatestFrom => #36
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=CheckerBoard) => #37
        FloatProperty(Value=4)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #39
          Expression: Convert.ToString(it)
        #39, #37 -> WithLatestFrom => #40
        #3, #7, #11, #15, #19, #23, #28, #32, #36, #40 -> Merge => #41
        #41, #24 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject PictureID
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimID) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #10
        #9, #10 -> WithLatestFrom => #11
        #3, #7, #11 -> Merge => #12
        SubscribeSubject TrialNumber => #13
        #12, #13 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        SubscribeSubject SavePath => #3
        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        SubscribeSubject SavePath => #9
        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

SubscribeSubject PictureID
