<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NTrials" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NTrials</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimDuration</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>1</RangeMin>
              <RangeMax>2</RangeMax>
              <Count>11</Count>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>ITITimes</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1024</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.15</LocationX>
                    <LocationY>-0.85</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialITI</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimX</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimOn</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>randomNumber</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardAmount" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFiles">
                <io:Path>picture</io:Path>
                <io:SearchPattern>*.JPEG</io:SearchPattern>
                <io:SearchOption>TopDirectoryOnly</io:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoadImage</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PropertyMappings" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>picture\V_stim2.JPEG</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>MyTextures</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>PictureFileName</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PictureScaleY</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RunTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>UpdateTrialNumber</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>InitDelay</Name>
                    <Description>Delay when trial 0 initialized to give all other init processes time</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsTrial0</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT3S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsTrial&gt;0</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CreateTrialStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>MyTextures</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Length</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Add">
                      <Operand xsi:type="IntProperty">
                        <Value>-1</Value>
                      </Operand>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Upper" />
                      </PropertyMappings>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="p1:CreateDiscreteUniform">
                        <p1:Lower>0</p1:Lower>
                        <p1:Upper>9</p1:Upper>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>MyTextures</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Length</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Count" />
                      </PropertyMappings>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="p1:SampleDistinct">
                        <p1:Count>10</p1:Count>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:SubscribeWhen" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="TaskType Count" />
                    <Property Name="RangeMin" DisplayName="TaskType 0" />
                    <Property Name="RangeMax" DisplayName="TaskType1" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <RangeMin>-90</RangeMin>
                    <RangeMax>90</RangeMax>
                    <Count>3</Count>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisplayStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>DrawGratingSequence</Name>
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>PickTrialITI</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ITITimes</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="num:Permutation" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TrialITI</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>MakeTimespan</scr:Name>
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT1.7S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimDuration</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0.5S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Parameters</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>MyTextures</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureName />
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DrawImage</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Angle" Description="The angle of the image." />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="bv:AngleProperty">
                                  <bv:Value>0</bv:Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Angle" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ScaleX" />
                                <Property Name="ScaleY" />
                                <Property Name="ShiftX" />
                                <Property Name="ShiftY" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="LocationX" />
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Transform</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="LocationX" />
                                      <Property Name="Y" DisplayName="LocationY" />
                                      <Property Name="Z" DisplayName="Layer" Description="The optional drawing overlay priority. Lower numbers appear below higher numbers." />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Translate">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>-90</gl:X>
                                        <gl:Y>0</gl:Y>
                                        <gl:Z>0</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Angle" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:RotateZ">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:Angle>0</gl:Angle>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Scale">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>80</gl:X>
                                        <gl:Y>60</gl:Y>
                                        <gl:Z>1</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>transform</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="4" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>ScaleShift</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ScaleX" Category="Texture Mapping" />
                                      <Property Name="Y" DisplayName="ScaleY" Category="Texture Mapping" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="bv:CreateTextureScale">
                                        <bv:X>1</bv:X>
                                        <bv:Y>1</bv:Y>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>scale</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ShiftX" Category="Texture Mapping" />
                                      <Property Name="Y" DisplayName="ShiftY" Category="Texture Mapping" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="bv:CreateTextureShift">
                                        <bv:X>1</bv:X>
                                        <bv:Y>1</bv:Y>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>shift</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="5" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:DrawMesh">
                                  <gl:ShaderName>Image</gl:ShaderName>
                                  <gl:MeshName>Quad</gl:MeshName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="6" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source2" />
                              <Edge From="4" To="7" Label="Source2" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="rx:Sink">
                          <Name>PhotodiodeFlip</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:First" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Last" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>StimOn</Name>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>PhotodiodeSquare</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="0" To="3" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="5" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Parameters</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Parameters</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimX</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="16" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="24" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="22" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="21" Label="Source2" />
                        <Edge From="12" To="15" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="16" To="19" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NTrials</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>50</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MyTextures</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SendStop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>stop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>Emitter</osc:Connection>
                    <osc:Address>/stop</osc:Address>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SavePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:String,sys:String,sys:DateTimeOffset)">
              <rx:Name>WriteData</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SaveFormat</scr:Name>
              <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\peterslab\Desktop\bonsai_events.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITITimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NTrials</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>NTrials</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSize</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSpatialFreq</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSpatialFreq</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimDuration</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITITimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PictureFileName</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>PictureFileName</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="28" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="28" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="28" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="28" Label="Source4" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="28" Label="Source5" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="28" Label="Source6" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="27" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source7" />
                  <Edge From="28" To="30" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveVariables</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimX</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimX</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOn</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialITI</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="12" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" />
              <Property Name="CsvName" />
              <Property Name="BinName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveInfo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SavePath" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\Users\peterslab\Desktop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="CsvName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>bonsai_events.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CsvFile</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BinName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NoiseLocations.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>BinFile</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>