WorkflowBuilder(Version=2.7.1)
GroupWorkflow SetParameters
    FloatProperty(Value=3)
    -> BehaviorSubject WheelGain

    ExternalizedMapping(RangeMin(DisplayName=ITIMin), RangeMax(DisplayName=ITIMax), Count(DisplayName=#ITIVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4, RangeMax=7, Count=31)
    -> ReplaySubject ITITimes(BufferSize=nil)

    ExternalizedMapping(RangeMin(DisplayName=QuiescenceMin), RangeMax(DisplayName=QuiescenceMax), Count(DisplayName=#QuiescenceVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.5, RangeMax=2, Count=16)
    -> ReplaySubject QuiescenceTimes(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=QuiescenceThreshold, Description="Visual degrees to reset quiescence timer"))
    -> FloatProperty(Value=2)
    -> BehaviorSubject QuiescenceThreshold

    FloatProperty(Value=40)
    -> BehaviorSubject Stim1Size

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=6)
    -> BehaviorSubject RewardAmount

    ExternalizedMapping(Count(DisplayName="TaskType Count"), RangeMin(DisplayName="TaskType 0"), RangeMax(DisplayName=TaskType1))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=2)
    -> ReplaySubject TaskType(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=Error_repeat))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Error_repeat

    ExternalizedMapping(Value(DisplayName=ContinuoousCorrect))
    -> FloatProperty(Value=3)
    -> BehaviorSubject ContinuoousCorrect

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #1
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

Disable GroupWorkflow KeyboardControl(Description="Arrow keys for wheel control at desk")
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> FloatProperty(Value=20) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> FloatProperty(Value=-20) => #3
    #1, #3 -> Merge
    -> Multiply(Operand=FloatProperty(Value=0.1))
    -> PublishSubject Wheel

GroupWorkflow WheelControl(Description="Arrow keys for wheel control at desk")
    Bonsai.IO.CreateSerialPort
      Name=myArduino
      PortName=COM6
      BaudRate=250000
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=myArduino, NewLine=\n)
    -> Parse(Pattern=%i) => #2
    Defer deg/ticks => #3
      Description:
        Converts wheel degrees to screen degrees
        ticks: ticks/revolution for model rotary encoder
      Workflow
        FloatProperty(Value=360) => #0
        ExternalizedMapping(Value(DisplayName=Ticks))
        -> FloatProperty(Value=1024) => #2
        #0, #2 -> Zip
        -> Divide => #4
        SubscribeSubject WheelGain => #5
        #4, #5 -> Zip
        -> Multiply
        -> WorkflowOutput
    #2, #3 -> CombineLatest
    -> Multiply
    -> PublishSubject Wheel

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialQuiescence
    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Single> QuiescenceReset
    BehaviorSubject<System.Single> TrialStart
    BehaviorSubject<System.Single> ITIStart
    BehaviorSubject<System.Single> QuiescenceStart
    BehaviorSubject<System.Single> StimOn

    FloatProperty(Value=0)
    -> BehaviorSubject StimContrast

    GroupWorkflow CreateStim
        Bonsai.IO.GetFiles(Path=picture, SearchPattern=*.JPEG, SearchOption=TopDirectoryOnly)
        -> Merge
        -> CreateObservable LoadImage
            WorkflowInput Source1 => #0
            ExternalizedMapping(PropertyMappings) => #1
            #0, #1 -> PropertyMapping(FileName)
            -> Bonsai.Shaders.LoadImage
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=picture\V_stim2.JPEG
              ColorType=Unchanged
              FlipMode=Vertical
            -> WorkflowOutput
        -> Concat
        -> ToArray
        -> Take(Count=1)
        -> ReplaySubject MyTextures(BufferSize=nil)

        SubscribeSubject Draw => #7
        SubscribeSubject MyTextures => #8
        FloatProperty(Value=0)
        -> PropertyMapping(Value) => #10
        #10, #8 -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> CombineLatest => #12
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName="", TextureTarget=Texture2D) => #14
        #14, #12 -> Zip
        -> MemberSelector(Selector=Item2.Item1)
        -> GroupWorkflow DrawImage
            WorkflowInput Source1 => #0
            ExternalizedMapping(ScaleX, ScaleY, ShiftX, ShiftY) => #1
            BehaviorSubject<System.Single> StimX1
            -> PropertyMapping(Angle) => #3
            BehaviorSubject<System.Single> StimLocation1
            -> PropertyMapping(LocationX) => #5
            #0, #3, #5 -> GroupWorkflow Transform => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping => #1
                  X(DisplayName=LocationX)
                  Y(DisplayName=LocationY)
                  Z(DisplayName=Layer, Description="The optional drawing overlay priority. Lower numbers appear below higher numbers.")
                  Order
                #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #2
                ExternalizedMapping(Angle) => #3
                #2, #3 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                -> Bonsai.Shaders.Scale(Order=Prepend, X=80, Y=60, Z=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image)
                -> WorkflowOutput
            #6, #1 -> GroupWorkflow ScaleShift
                WorkflowInput Source1 => #0
                ExternalizedMapping(X(DisplayName=ScaleX, Category="Texture Mapping"), Y(DisplayName=ScaleY, Category="Texture Mapping")) => #1
                #0, #1 -> BonVision.CreateTextureScale(X=1, Y=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Image) => #3
                ExternalizedMapping(X(DisplayName=ShiftX, Category="Texture Mapping"), Y(DisplayName=ShiftY, Category="Texture Mapping")) => #4
                #3, #4 -> BonVision.CreateTextureShift(X=1, Y=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Image)
                -> WorkflowOutput
            -> Bonsai.Shaders.DrawMesh(ShaderName=Image, MeshName=Quad)
            -> WorkflowOutput

        SubscribeSubject Draw => #18
        SubscribeSubject MyTextures => #19
        FloatProperty(Value=1)
        -> PropertyMapping(Value) => #21
        #21, #19 -> Index(Operand=IntProperty(Value=1)) => #22
        #18, #22 -> CombineLatest => #23
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName="", TextureTarget=Texture2D) => #25
        #25, #23 -> Zip
        -> MemberSelector(Selector=Item2.Item1)
        -> GroupWorkflow DrawImage
            WorkflowInput Source1 => #0
            ExternalizedMapping(ScaleX, ScaleY, ShiftX, ShiftY) => #1
            BehaviorSubject<System.Single> StimX2
            -> PropertyMapping(Angle) => #3
            BehaviorSubject<System.Single> StimLocation2
            -> PropertyMapping(LocationX) => #5
            #0, #3, #5 -> GroupWorkflow Transform => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping => #1
                  X(DisplayName=LocationX)
                  Y(DisplayName=LocationY)
                  Z(DisplayName=Layer, Description="The optional drawing overlay priority. Lower numbers appear below higher numbers.")
                  Order
                #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=1000, Y=0, Z=0) => #2
                ExternalizedMapping(Angle) => #3
                #2, #3 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                -> Bonsai.Shaders.Scale(Order=Prepend, X=80, Y=60, Z=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image)
                -> WorkflowOutput
            #6, #1 -> GroupWorkflow ScaleShift
                WorkflowInput Source1 => #0
                ExternalizedMapping(X(DisplayName=ScaleX, Category="Texture Mapping"), Y(DisplayName=ScaleY, Category="Texture Mapping")) => #1
                #0, #1 -> BonVision.CreateTextureScale(X=1, Y=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=scale, ShaderName=Image) => #3
                ExternalizedMapping(X(DisplayName=ShiftX, Category="Texture Mapping"), Y(DisplayName=ShiftY, Category="Texture Mapping")) => #4
                #3, #4 -> BonVision.CreateTextureShift(X=1, Y=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Image)
                -> WorkflowOutput
            -> Bonsai.Shaders.DrawMesh(ShaderName=Image, MeshName=Quad)
            -> WorkflowOutput

    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> ManualReward
    BehaviorSubject<System.Single> TrialType

    FloatProperty(Value=0) => #16
    -> MulticastSubject StimX2
    #16 -> MulticastSubject StimX1

    FloatProperty(Value=1)
    -> BehaviorSubject Outcome

    BehaviorSubject<System.Single> lastTrialType

    FloatProperty(Value=0)
    -> BehaviorSubject CC

    FloatProperty(Value=1000)
    -> MulticastSubject StimLocation2
    -> MulticastSubject StimLocation1

GroupWorkflow RewardValve
    SubscribeSubject RewardAmount => #0
    Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=50) => #4
    #0, #4 -> CombineLatest
    -> Multiply
    -> PropertyMapping(Value)
    -> IntProperty(Value=300)
    -> BehaviorSubject OpenValve

    GroupWorkflow ManualValve(Description="Press a key to manually open the valve")
        ExternalizedMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown => #1
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control
          SuppressRepetitions=false
        SubscribeSubject OpenValve
        -> PropertyMapping(Value) => #3
        #1, #3 -> IntProperty(Value=300)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString
          Expression: Convert.ToString(it)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> BooleanProperty(Value=true)
        -> MulticastSubject ManualReward
        -> WorkflowOutput

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> SelectMany InitDelay(Description="Delay when trial 0 initialized to give all other init processes time")
        WorkflowInput Source1 => #0
        -> Condition IsTrial0
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Delay(DueTime=PT3S) => #2
        #0 -> Condition IsTrial>0 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber
    -> WorkflowOutput
-> SelectMany PickTrialParams
    WorkflowInput Source1
    -> Sink PickTrialITI
        GroupWorkflow PickTrialITI
            SubscribeSubject ITITimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialITI
        -> WorkflowOutput
    -> Sink PickTrialQuiescence
        GroupWorkflow PickTrialQuiescence
            SubscribeSubject QuiescenceTimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialQuiescence
        -> WorkflowOutput
    -> Sink PickTaskType
        GroupWorkflow PickTrialTaskType
            SubscribeSubject Error_repeat => #0
            -> Equal(Operand=FloatProperty(Value=1))
            -> Condition RepeatError
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Pick_type => #3
                SubscribeSubject Outcome => #0
                -> Equal(Operand=FloatProperty(Value=1))
                -> Condition Correct
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany resample => #3
                    WorkflowInput Source1

                    SubscribeSubject CC => #1
                    -> GreaterThan(Operand=FloatProperty(Value=0))
                    -> Condition Correct
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany repeat => #4
                        SubscribeSubject lastTrialType
                        -> WorkflowOutput

                        WorkflowInput Source1
                    #1 -> Equal(Operand=FloatProperty(Value=0))
                    -> Condition Error
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany resample => #7
                        SubscribeSubject TaskType
                        -> Bonsai.Numerics.Permutation
                        -> Take(Count=1)
                        -> WorkflowOutput

                        WorkflowInput Source1
                    #7, #4 -> Amb
                    -> WorkflowOutput

                    Disable SubscribeSubject TaskType
                    -> Disable Bonsai.Numerics.Permutation
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput
                #0 -> Equal(Operand=FloatProperty(Value=0))
                -> Condition Error
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany repeat => #6
                    SubscribeSubject lastTrialType
                    -> WorkflowOutput

                    WorkflowInput Source1
                #3, #6 -> Amb
                -> WorkflowOutput

                SubscribeSubject CC => #9
                SubscribeSubject ContinuoousCorrect
                -> PropertyMapping(Value) => #11
                #9, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=2))
                -> Condition Error
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany resample
                    WorkflowInput Source1

                    FloatProperty(Value=0)
                    -> MulticastSubject CC
                    -> WorkflowOutput
            #0 -> Equal(Operand=FloatProperty(Value=0))
            -> Condition NoRepeatError
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Pick_type => #6
                SubscribeSubject TaskType
                -> Bonsai.Numerics.Permutation
                -> Take(Count=1)
                -> WorkflowOutput

                WorkflowInput Source1
            #3, #6 -> Amb
            -> WorkflowOutput
        -> MulticastSubject TrialType
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany ITI
    SubscribeSubject TrialITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.4S, Period=PT0S) => #3
    WorkflowInput Source1
    -> Sink ITIStartTimestamp => #5
        BooleanProperty(Value=true)
        -> MulticastSubject ITIStart
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput
-> SelectMany QuiescenceTimer => #9
    WorkflowInput Source1
    -> Sink QuiescenceStartTimestamp
        BooleanProperty(Value=true)
        -> MulticastSubject QuiescenceStart
        -> WorkflowOutput
    -> SelectMany RunQuiescenceTimer => #2
        SubscribeSubject Wheel => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SubscribeWhen
        -> Bonsai.Dsp.Abs
        -> Accumulate => #4
        SubscribeSubject QuiescenceThreshold
        -> PropertyMapping(Value) => #6
        #4, #6 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject QuiescenceReset
        -> Repeat => #10
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge
        -> WorkflowOutput
    SubscribeSubject TrialQuiescence
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #5
    #2, #5 -> Throttle(DueTime=PT0.7S)
    -> First
    -> WorkflowOutput
-> Condition LeftVisual
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=0) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany LeftStim => #11
    SubscribeSubject Wheel
    -> Multiply(Operand=FloatProperty(Value=-0.034)) => #1
    WorkflowInput Source1
    -> FloatProperty(Value=0) => #3
    #3, #1 -> Merge
    -> Accumulate
    -> MulticastSubject StimX1
    -> Sink StimOn => #7
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject StimContrast
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=0)
        -> MulticastSubject StimLocation1
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=3.14))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #10
    #7 -> LessThanOrEqual(Operand=FloatProperty(Value=-3.14))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #13
    #10, #13 -> Amb
    -> First
    -> WorkflowOutput

    FloatProperty(Value=0)
    -> MulticastSubject lastTrialType
#9 -> Condition RightVisual
    ExternalizedMapping(Value(DisplayName=TrialType))
    -> FloatProperty(Value=1) => #1
    SubscribeSubject TrialType => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    WorkflowInput Source1 => #5
    #4, #5 -> SubscribeWhen
    -> First
    -> WorkflowOutput
-> SelectMany RightStim => #13
    WorkflowInput Source1
    -> FloatProperty(Value=0) => #1
    SubscribeSubject Wheel
    -> Multiply(Operand=FloatProperty(Value=-0.034)) => #3
    #1, #3 -> Merge
    -> Accumulate
    -> MulticastSubject StimX2
    -> Sink StimOn => #7
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=0)
        -> MulticastSubject StimLocation2
    -> GreaterThanOrEqual(Operand=FloatProperty(Value=3.14))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #10
    #7 -> LessThanOrEqual(Operand=FloatProperty(Value=-3.14))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #13
    #10, #13 -> Amb
    -> First
    -> WorkflowOutput

    FloatProperty(Value=1)
    -> MulticastSubject lastTrialType
#11, #13 -> Merge => #14
-> Condition Hit
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Reward => #16
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=0)
        -> MulticastSubject StimX1
        -> MulticastSubject StimX2

        IntProperty(Value=1000)
        -> MulticastSubject StimLocation1
        -> MulticastSubject StimLocation2
    -> Sink OpenValve
        SubscribeSubject OpenValve
        -> Bonsai.Scripting.IronPython.PythonTransform MakeString
          Script:
            @returns(str)
            def process(value):
              return str.format("{0}", value)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> WorkflowOutput
    -> WorkflowOutput

    SubscribeSubject CC
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject CC
#14 -> Condition Miss
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> SelectMany Punish => #18
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject PhotodiodeSquare

        IntProperty(Value=0)
        -> MulticastSubject StimX1
        -> MulticastSubject StimX2

        IntProperty(Value=1000)
        -> MulticastSubject StimLocation1
        -> MulticastSubject StimLocation2
    -> WorkflowOutput

    FloatProperty(Value=0)
    -> MulticastSubject CC
#16, #18 -> Merge
-> Repeat
-> GroupWorkflow Stop
    WorkflowInput Source1 => #0
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver) => #1
    #0, #1 -> TakeUntil
    -> TakeLast(Count=1)
    -> StringProperty(Value=stop)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject QuiescenceTimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceTimes) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceThreshold
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceThreshold) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject Stim1Size
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject WheelGain
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WheelGain) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject RewardAmount
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardAmount) => #26
        #25, #26 -> WithLatestFrom => #27
        IntProperty(Value=0) => #28
        SubscribeSubject Error_repeat
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #30
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ErrorRepeat) => #31
        #30, #31 -> WithLatestFrom => #32
        FloatProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #34
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=GratingCircle_Left) => #35
        #34, #35 -> WithLatestFrom => #36
        FloatProperty(Value=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #38
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=CheckboardSquare_Right) => #39
        #38, #39 -> WithLatestFrom => #40
        #3, #7, #11, #15, #19, #23, #27, #32, #36, #40 -> Merge => #41
        #41, #28 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject TrialQuiescence
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialQuiescence) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceReset
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceReset) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Outcome) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStart) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject ITIStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIStart) => #26
        #25, #26 -> WithLatestFrom => #27
        SubscribeSubject QuiescenceStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #29
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceStart) => #30
        #29, #30 -> WithLatestFrom => #31
        SubscribeSubject ManualReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #33
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ManualReward) => #34
        #33, #34 -> WithLatestFrom => #35
        SubscribeSubject TrialNumber => #36
        SubscribeSubject TrialType
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #38
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TaskType) => #39
        #38, #39 -> WithLatestFrom => #40
        #3, #7, #11, #15, #19, #23, #27, #31, #35, #40 -> Merge => #41
        #41, #36 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        SubscribeSubject SavePath => #3
        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        SubscribeSubject SavePath => #9
        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

GroupWorkflow TotalWater(Description="Cumulative water given during task (just for human readout)")
    SubscribeSubject Outcome
    -> Accumulate => #1
    SubscribeSubject RewardAmount => #2
    #1, #2 -> WithLatestFrom
    -> Multiply
    -> Add(Operand=FloatProperty(Value=-6))
    -> WorkflowOutput

SubscribeSubject Outcome
SubscribeSubject TrialType
SubscribeSubject CC
