WorkflowBuilder(Version=2.8.1)
GroupWorkflow SetParameters
    FloatProperty(Value=3)
    -> BehaviorSubject WheelGain

    ExternalizedMapping(RangeMin(DisplayName=ITIMin), RangeMax(DisplayName=ITIMax), Count(DisplayName=#ITIVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=31, RangeMin=4, RangeMax=7)
    -> ReplaySubject ITITimes(BufferSize=nil)

    ExternalizedMapping(RangeMin(DisplayName=QuiescenceMin), RangeMax(DisplayName=QuiescenceMax), Count(DisplayName=#QuiescenceVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=16, RangeMin=0.5, RangeMax=2)
    -> ReplaySubject QuiescenceTimes(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=QuiescenceThreshold, Description="Visual degrees to reset quiescence timer"))
    -> FloatProperty(Value=2)
    -> BehaviorSubject QuiescenceThreshold

    FloatProperty(Value=20)
    -> BehaviorSubject StimSize

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=1)
    -> BehaviorSubject RewardAmount

    ExternalizedMapping(Count(DisplayName=TaskType), RangeMin(DisplayName="TaskType 0"), RangeMax(DisplayName=TaskType1))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=0, RangeMax=1)
    -> ReplaySubject TaskType(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=AudioFrequency))
    -> FloatProperty(Value=8000)
    -> BehaviorSubject AudioFrequency

    ExternalizedMapping(Value(DisplayName=AudioAmplitude_set))
    -> FloatProperty(Value=270)
    -> BehaviorSubject AudioAmplitude_set

    ExternalizedMapping(Value(DisplayName=NTrials))
    -> IntProperty(Value=50)
    -> BehaviorSubject NTrials

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #1
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

Disable GroupWorkflow KeyboardControl(Description="Arrow keys for wheel control at desk")
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> FloatProperty(Value=20) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> FloatProperty(Value=-20) => #3
    #1, #3 -> Merge
    -> Multiply(Operand=FloatProperty(Value=0.1))
    -> PublishSubject Wheel

GroupWorkflow WheelControl(Description="Arrow keys for wheel control at desk")
    Bonsai.IO.CreateSerialPort
      Name=myArduino
      PortName=COM6
      BaudRate=250000
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=myArduino, NewLine=\n)
    -> Parse(Pattern=%i) => #2
    Defer deg/ticks => #3
      Description:
        Converts wheel degrees to screen degrees
        ticks: ticks/revolution for model rotary encoder
      Workflow
        FloatProperty(Value=360) => #0
        ExternalizedMapping(Value(DisplayName=Ticks))
        -> FloatProperty(Value=1024) => #2
        #0, #2 -> Zip
        -> Divide => #4
        SubscribeSubject WheelGain => #5
        #4, #5 -> Zip
        -> Multiply
        -> WorkflowOutput
    #2, #3 -> CombineLatest
    -> Multiply
    -> PublishSubject Wheel

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialQuiescence
    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Single> QuiescenceReset
    BehaviorSubject<System.Single> TrialStart
    BehaviorSubject<System.Single> ITIStart
    BehaviorSubject<System.Single> QuiescenceStart
    BehaviorSubject<System.Single> StimOn
    BehaviorSubject<System.Single> Outcome

    FloatProperty(Value=0)
    -> BehaviorSubject StimContrast

    GroupWorkflow CreateStim
        SubscribeSubject Draw => #0
        BehaviorSubject<System.Single> StimX
        -> PropertyMapping(LocationX) => #2
        SubscribeSubject StimSize
        -> PropertyMapping(ExtentX, ExtentY) => #4
        SubscribeSubject StimSpatialFreq
        -> PropertyMapping(SpatialFrequency) => #6
        BehaviorSubject<System.Single> TrialStimPhase
        -> PropertyMapping(Phase) => #8
        SubscribeSubject StimContrast
        -> PropertyMapping(Contrast) => #10
        #0, #2, #4, #6, #8, #10 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=90
          LocationY=0
          Layer=0
          ExtentX=20
          ExtentY=20
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=8766.254
          Angle=0
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=1
        -> WorkflowOutput

    GroupWorkflow AudioStim
        SubscribeSubject AudioAmplitude
        -> PropertyMapping(Amplitude) => #1
        SubscribeSubject AudioFrequency
        -> PropertyMapping(Frequency) => #3
        #1, #3 -> Bonsai.Dsp.FunctionGenerator(BufferLength=441, Frequency=8000, Waveform=Sine, SampleRate=44100, Amplitude=270, Offset=0, Phase=0)
        -> Bonsai.Audio.AudioPlayback(SourceName="", SampleRate=44100, State=Playing)

        FloatProperty(Value=0)
        -> BehaviorSubject AudioAmplitudeDummy

        FloatProperty(Value=0)
        -> BehaviorSubject AudioAmplitude

    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> ManualReward

GroupWorkflow RewardValve
    SubscribeSubject RewardAmount => #0
    Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=54.17) => #4
    #0, #4 -> CombineLatest
    -> Multiply
    -> PropertyMapping(Value)
    -> IntProperty(Value=325)
    -> BehaviorSubject OpenValve

    GroupWorkflow ManualValve(Description="Press a key to manually open the valve")
        ExternalizedMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown => #1
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control
          SuppressRepetitions=false
        SubscribeSubject OpenValve
        -> PropertyMapping(Value) => #3
        #1, #3 -> IntProperty(Value=325)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString
          Expression: Convert.ToString(it)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> BooleanProperty(Value=true)
        -> MulticastSubject ManualReward
        -> WorkflowOutput

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> SelectMany FirstTrialDelay(Description="Delay first trial to give time for parameters to initialize")
        WorkflowInput Source1 => #0
        -> Condition IsTrial1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Delay(DueTime=PT2S) => #2
        #0 -> Condition IsTrial>1 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> MulticastSubject TrialNumber => #4
    -> WorkflowOutput
    #4 -> BooleanProperty(Value=true)
    -> MulticastSubject TrialStart
-> SelectMany PickTrialParams
    WorkflowInput Source1
    -> Sink PickTrialStimPhase
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=360)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject TrialStimPhase
        -> WorkflowOutput
    -> Sink PickTrialITI
        GroupWorkflow PickTrialITI
            SubscribeSubject ITITimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialITI
        -> WorkflowOutput
    -> Sink PickTrialQuiescence
        GroupWorkflow PickTrialQuiescence
            SubscribeSubject QuiescenceTimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialQuiescence
        -> WorkflowOutput
    -> Sink PickTaskType
        GroupWorkflow PickTrialQuiescence
            SubscribeSubject QuiescenceTimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TaskType
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany ITI
    SubscribeSubject TrialITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.5S, Period=PT0S) => #3
    WorkflowInput Source1
    -> Sink ITIStartTimestamp => #5
        BooleanProperty(Value=true)
        -> MulticastSubject ITIStart
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput
-> SelectMany QuiescenceTimer
    WorkflowInput Source1
    -> Sink QuiescenceStartTimestamp
        BooleanProperty(Value=true)
        -> MulticastSubject QuiescenceStart
        -> WorkflowOutput
    -> SelectMany RunQuiescenceTimer => #2
        SubscribeSubject Wheel => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SubscribeWhen
        -> Bonsai.Dsp.Abs
        -> Accumulate => #4
        SubscribeSubject QuiescenceThreshold
        -> PropertyMapping(Value) => #6
        #4, #6 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject QuiescenceReset
        -> Repeat => #10
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge
        -> WorkflowOutput
    SubscribeSubject TrialQuiescence
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #5
    #2, #5 -> Throttle(DueTime=PT0.8S)
    -> First
    -> WorkflowOutput
-> GroupWorkflow CreateTrialStim
    WorkflowInput Source1
    -> BonVision.Collections.GratingsSpecification => #1
      Trials
        GratingParameters(X=-90, Y=0, Contrast=1, TemporalFrequency=0, Orientation=0)
        GratingParameters(X=0, Y=0, Contrast=1, TemporalFrequency=0, Orientation=0)
        GratingParameters(X=90, Y=0, Contrast=1, TemporalFrequency=0, Orientation=0)
    SubscribeSubject StimDuration
    -> PropertyMapping(Duration) => #3
    SubscribeSubject StimSize
    -> PropertyMapping(Diameter) => #5
    SubscribeSubject StimSpatialFreq
    -> PropertyMapping(SpatialFrequency) => #7
    #1, #3, #5, #7 -> BonVision.Collections.CreateGratingTrial(Delay=0, Duration=0.5, Diameter=20, X=0, Y=0, Contrast=1, SpatialFrequency=0.1, TemporalFrequency=0, Orientation=0)
    -> Bonsai.Numerics.Permutation
    -> WorkflowOutput
-> GroupWorkflow DisplayStim => #11
    WorkflowInput Source1
    -> CreateObservable DrawGratingSequence
        WorkflowInput Source1
        -> AsyncSubject Parameters

        SubscribeSubject Draw => #2
        SubscribeSubject Parameters
        -> PropertyMapping => #4
          LocationX(Selector=X)
          LocationY(Selector=Y)
          Angle(Selector=Orientation)
          SpatialFrequency(Selector=SpatialFrequency)
          TemporalFrequency(Selector=TemporalFrequency)
          Contrast(Selector=Contrast)
          ExtentX(Selector=Diameter)
          ExtentY(Selector=Diameter)
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=-180, Upper=180)
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(Phase) => #8
        #2, #4, #8 -> IncludeWorkflow => #9
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=90
          LocationY=0
          Layer=1
          ExtentX=20
          ExtentY=20
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=-2119.94385
          Angle=0
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=1
        SubscribeSubject Parameters
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(Duration)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #13
        #9, #13 -> TakeUntil
        -> Sink PhotodiodeFlip => #15
            WorkflowInput Source1 => #0
            -> First
            -> IntProperty(Value=1) => #2
            #0 -> Last
            -> IntProperty(Value=0) => #4
            #2, #4 -> Merge
            -> MulticastSubject StimOn
            -> MulticastSubject PhotodiodeSquare
            -> WorkflowOutput
        GroupWorkflow PickTrialITI
            SubscribeSubject ITITimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1.8S) => #20
        #15, #20 -> SubscribeWhen
        -> WorkflowOutput

        SubscribeSubject Parameters
        -> MemberSelector(Selector=X)
        -> MulticastSubject TrialStimX
    -> Concat
    -> WorkflowOutput
SubscribeSubject NTrials
-> PropertyMapping(Count) => #13
#11, #13 -> RepeatCount(Count=50)
-> Last
-> SelectMany EndDelay
    ExternalizedMapping(DueTime)
    -> Timer(DueTime=PT5S, Period=PT0S) => #1
    WorkflowInput Source1 => #2
    #1, #2 -> SubscribeWhen
    -> BooleanProperty(Value=true)
    -> WorkflowOutput
-> GroupWorkflow Stop
    WorkflowInput Source1 => #0
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver)
    -> BooleanProperty(Value=false) => #2
    #0, #2 -> Amb
    -> First
    -> Sink SendStop
        WorkflowInput Source1
        -> StringProperty(Value=stop)
        -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject QuiescenceTimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceTimes) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceThreshold
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceThreshold) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimSize
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject WheelGain
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WheelGain) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject RewardAmount
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardAmount) => #26
        #25, #26 -> WithLatestFrom => #27
        #3, #7, #11, #15, #19, #23, #27 -> Merge => #28
        IntProperty(Value=0) => #29
        #28, #29 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject TrialQuiescence
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialQuiescence) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceReset
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceReset) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Outcome) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStart) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject ITIStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIStart) => #26
        #25, #26 -> WithLatestFrom => #27
        SubscribeSubject QuiescenceStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #29
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceStart) => #30
        #29, #30 -> WithLatestFrom => #31
        SubscribeSubject TrialStimPhase
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #33
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStimPhase) => #34
        #33, #34 -> WithLatestFrom => #35
        SubscribeSubject ManualReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #37
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ManualReward) => #38
        #37, #38 -> WithLatestFrom => #39
        #3, #7, #11, #15, #19, #23, #27, #31, #35, #39 -> Merge => #40
        SubscribeSubject TrialNumber => #41
        #40, #41 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        SubscribeSubject SavePath => #3
        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        SubscribeSubject SavePath => #9
        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

GroupWorkflow TotalWater(Description="Cumulative water given during task (just for human readout)")
    SubscribeSubject Outcome
    -> Accumulate => #1
    SubscribeSubject RewardAmount => #2
    #1, #2 -> WithLatestFrom
    -> Multiply
    -> WorkflowOutput
