WorkflowBuilder(Version=2.7.1)
GroupWorkflow SetParameters
    FloatProperty(Value=3)
    -> BehaviorSubject WheelGain

    ExternalizedMapping(RangeMin(DisplayName=ITIMin), RangeMax(DisplayName=ITIMax), Count(DisplayName=#ITIVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4, RangeMax=7, Count=31)
    -> ReplaySubject ITITimes(BufferSize=nil)

    ExternalizedMapping(RangeMin(DisplayName=QuiescenceMin), RangeMax(DisplayName=QuiescenceMax), Count(DisplayName=#QuiescenceVals))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.5, RangeMax=2, Count=16)
    -> ReplaySubject QuiescenceTimes(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=QuiescenceThreshold, Description="Visual degrees to reset quiescence timer"))
    -> FloatProperty(Value=2)
    -> BehaviorSubject QuiescenceThreshold

    FloatProperty(Value=20)
    -> BehaviorSubject StimSize

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=6)
    -> BehaviorSubject RewardAmount

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
        #4, #2 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

Disable GroupWorkflow KeyboardControl(Description="Arrow keys for wheel control at desk")
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> FloatProperty(Value=20) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> FloatProperty(Value=-20) => #3
    #1, #3 -> Merge
    -> Multiply(Operand=FloatProperty(Value=0.1))
    -> PublishSubject Wheel

GroupWorkflow WheelControl(Description="Arrow keys for wheel control at desk")
    Bonsai.IO.CreateSerialPort
      Name=myArduino
      PortName=COM6
      BaudRate=250000
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=myArduino, NewLine=\n)
    -> Parse(Pattern=%i) => #2
    Defer deg/ticks => #3
      Description:
        Converts wheel degrees to screen degrees
        ticks: ticks/revolution for model rotary encoder
      Workflow
        FloatProperty(Value=360) => #0
        ExternalizedMapping(Value(DisplayName=Ticks))
        -> FloatProperty(Value=1024) => #2
        #0, #2 -> Zip
        -> Divide => #4
        SubscribeSubject WheelGain => #5
        #4, #5 -> Zip
        -> Multiply
        -> WorkflowOutput
    #2, #3 -> CombineLatest
    -> Multiply
    -> PublishSubject Wheel

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialQuiescence
    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Single> QuiescenceReset
    BehaviorSubject<System.Single> TrialStart
    BehaviorSubject<System.Single> ITIStart
    BehaviorSubject<System.Single> QuiescenceStart
    BehaviorSubject<System.Single> StimOn
    BehaviorSubject<System.Single> Outcome

    FloatProperty(Value=0)
    -> BehaviorSubject StimContrast

    GroupWorkflow CreateStim
        BehaviorSubject<System.Single> TrialStimPhase
        -> PropertyMapping(Phase) => #1
        SubscribeSubject Draw => #2
        SubscribeSubject StimSize
        -> PropertyMapping(ExtentX, ExtentY) => #4
        SubscribeSubject StimSpatialFreq
        -> PropertyMapping(SpatialFrequency) => #6
        BehaviorSubject<System.Single> StimX
        -> PropertyMapping(LocationX) => #8
        SubscribeSubject StimContrast
        -> PropertyMapping(Opacity) => #10
        FloatProperty(Value=1)
        -> PropertyMapping(Contrast) => #12
        #2, #8, #4, #6, #1, #10, #12 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=90
          LocationY=0
          Layer=0
          Angle=0
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=8766.254
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=1
          ExtentX=20
          ExtentY=20
        -> WorkflowOutput

    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> ManualReward

GroupWorkflow RewardValve
    SubscribeSubject RewardAmount => #0
    Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=54.17) => #4
    #0, #4 -> CombineLatest
    -> Multiply
    -> PropertyMapping(Value)
    -> IntProperty(Value=325)
    -> BehaviorSubject OpenValve

    GroupWorkflow ManualValve(Description="Press a key to manually open the valve")
        SubscribeSubject OpenValve
        -> PropertyMapping(Value) => #1
        ExternalizedMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown => #3
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control
          SuppressRepetitions=false
        #3, #1 -> IntProperty(Value=325)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString
          Expression: Convert.ToString(it)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> BooleanProperty(Value=true)
        -> MulticastSubject ManualReward
        -> WorkflowOutput

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> SelectMany FirstTrialDelay(Description="Delay first trial to give time for parameters to initialize")
        WorkflowInput Source1 => #0
        -> Condition IsTrial1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Delay(DueTime=PT2S) => #2
        #0 -> Condition IsTrial>1 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> MulticastSubject TrialNumber => #4
    -> WorkflowOutput
    #4 -> BooleanProperty(Value=true)
    -> MulticastSubject TrialStart
-> SelectMany PickTrialParams
    WorkflowInput Source1
    -> Sink PickTrialStimPhase
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=360)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject TrialStimPhase
        -> WorkflowOutput
    -> Sink PickTrialITI
        GroupWorkflow PickTrialITI
            SubscribeSubject ITITimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialITI
        -> WorkflowOutput
    -> Sink PickTrialQuiescence
        GroupWorkflow PickTrialQuiescence
            SubscribeSubject QuiescenceTimes
            -> Bonsai.Numerics.Permutation
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject TrialQuiescence
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany ITI
    SubscribeSubject TrialITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.5S, Period=PT0S) => #3
    WorkflowInput Source1
    -> Sink ITIStartTimestamp => #5
        BooleanProperty(Value=true)
        -> MulticastSubject ITIStart
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput
-> SelectMany QuiescenceTimer
    WorkflowInput Source1
    -> Sink QuiescenceStartTimestamp
        BooleanProperty(Value=true)
        -> MulticastSubject QuiescenceStart
        -> WorkflowOutput
    -> SelectMany RunQuiescenceTimer => #2
        SubscribeSubject Wheel => #0
        SubscribeSubject QuiescenceThreshold
        -> PropertyMapping(Value) => #2
        WorkflowInput Source1 => #3
        #0, #3 -> SubscribeWhen
        -> Bonsai.Dsp.Abs
        -> Accumulate => #6
        #6, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject QuiescenceReset
        -> Repeat => #10
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge
        -> WorkflowOutput
    SubscribeSubject TrialQuiescence
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #5
    #2, #5 -> Throttle(DueTime=PT0.8S)
    -> First
    -> WorkflowOutput
-> SelectMany InteractiveStim => #10
    WorkflowInput Source1
    -> FloatProperty(Value=90) => #1
    SubscribeSubject Wheel => #2
    #1, #2 -> Merge
    -> Accumulate
    -> MulticastSubject StimX
    -> Sink StimOn => #6
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject StimContrast
        -> MulticastSubject PhotodiodeSquare
    -> LessThanOrEqual(Operand=FloatProperty(Value=0))
    -> Condition StimToCenter
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #9
    #6 -> GreaterThanOrEqual(Operand=FloatProperty(Value=135))
    -> Condition StimToPeriphery
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #12
    #12, #9 -> Amb
    -> First
    -> WorkflowOutput
-> Condition Hit
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Reward => #12
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject StimContrast
        -> MulticastSubject PhotodiodeSquare
    -> Sink OpenValve
        SubscribeSubject OpenValve
        -> Bonsai.Scripting.IronPython.PythonTransform MakeString
          Script:
            @returns(str)
            def process(value):
              return str.format("{0}", value)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> WorkflowOutput
    -> WorkflowOutput
#10 -> Condition Miss
    WorkflowInput Source1
    -> BitwiseNot
    -> WorkflowOutput
-> SelectMany Punish => #14
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> Delay(DueTime=PT2S)
    -> Sink StimOff
        IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject StimContrast
        -> MulticastSubject PhotodiodeSquare
    -> WorkflowOutput
#12, #14 -> Merge
-> Repeat
-> GroupWorkflow Stop
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver) => #0
    WorkflowInput Source1 => #1
    #1, #0 -> TakeUntil
    -> TakeLast(Count=1)
    -> StringProperty(Value=stop)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject ITITimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        SubscribeSubject QuiescenceTimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #3
          Expression: Convert.ToString(it)
        SubscribeSubject QuiescenceThreshold
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        SubscribeSubject StimSize
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #7
          Expression: Convert.ToString(it)
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITITimes) => #10
        #1, #10 -> WithLatestFrom => #11
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceTimes) => #12
        #3, #12 -> WithLatestFrom => #13
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceThreshold) => #14
        #5, #14 -> WithLatestFrom => #15
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #16
        #7, #16 -> WithLatestFrom => #17
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #18
        #9, #18 -> WithLatestFrom => #19
        IntProperty(Value=0) => #20
        SubscribeSubject WheelGain
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #22
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WheelGain) => #23
        #22, #23 -> WithLatestFrom => #24
        SubscribeSubject RewardAmount
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #26
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardAmount) => #27
        #26, #27 -> WithLatestFrom => #28
        #11, #13, #15, #17, #19, #24, #28 -> Merge => #29
        #29, #20 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject TrialQuiescence
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialQuiescence) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject QuiescenceReset
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceReset) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #15
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #16
        #13, #16 -> WithLatestFrom => #17
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Outcome) => #18
        #15, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        SubscribeSubject ITIStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #23
          Expression: Convert.ToString(it)
        SubscribeSubject QuiescenceStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStart) => #26
        #21, #26 -> WithLatestFrom => #27
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIStart) => #28
        #23, #28 -> WithLatestFrom => #29
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=QuiescenceStart) => #30
        #25, #30 -> WithLatestFrom => #31
        SubscribeSubject TrialNumber => #32
        SubscribeSubject TrialStimPhase
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #34
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStimPhase) => #35
        #34, #35 -> WithLatestFrom => #36
        SubscribeSubject ManualReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #38
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ManualReward) => #39
        #38, #39 -> WithLatestFrom => #40
        #3, #7, #11, #17, #19, #27, #29, #31, #36, #40 -> Merge => #41
        #41, #32 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #4
        SubscribeSubject SavePath => #5
        #5, #4 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #10
        SubscribeSubject SavePath => #11
        #11, #10 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

GroupWorkflow TotalWater(Description="Cumulative water given during task (just for human readout)")
    SubscribeSubject RewardAmount => #0
    SubscribeSubject Outcome
    -> Accumulate => #2
    #2, #0 -> WithLatestFrom
    -> Multiply
    -> WorkflowOutput
