WorkflowBuilder(Version=2.8.5)
GroupWorkflow SetParameters
    FloatProperty(Value=3)
    -> BehaviorSubject WheelGain

    FloatProperty(Value=20)
    -> BehaviorSubject StimSize

    FloatProperty(Value=0.1)
    -> BehaviorSubject StimSpatialFreq

    ExternalizedMapping(Value(DisplayName=RewardAmount))
    -> FloatProperty(Value=6)
    -> BehaviorSubject RewardAmount

    ExternalizedMapping(Value(DisplayName=NTrials))
    -> IntProperty(Value=200)
    -> BehaviorSubject NTrials

    ExternalizedMapping(RangeMin(DisplayName=TrialXMin), RangeMax(DisplayName=TrialXMax), Count(DisplayName=TrialXCount))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=-90, RangeMax=90)
    -> ReplaySubject TrialXSpace(BufferSize=nil)

    FloatProperty(Value=90)
    -> BehaviorSubject StimX

    FloatProperty(Value=90)
    -> BehaviorSubject RewardedX

    ExternalizedMapping(Value(DisplayName=ITIMeanAdd))
    -> DoubleProperty(Value=5)
    -> BehaviorSubject ITIMeanAdd

    ExternalizedMapping(Value(DisplayName=ITIMin))
    -> DoubleProperty(Value=5)
    -> BehaviorSubject ITIMin

    ExternalizedMapping(Value(DisplayName=ITIMax))
    -> DoubleProperty(Value=60)
    -> BehaviorSubject ITIMax

    ExternalizedMapping(Value(DisplayName=StimTime))
    -> FloatProperty(Value=3)
    -> BehaviorSubject StimTime

    ExternalizedMapping(RangeMin(DisplayName=RewardTimeMin), RangeMax(DisplayName=RewardTimeMax), Count(DisplayName=RewardTimeCount))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=5, RangeMin=1.9, RangeMax=2.3)
    -> ReplaySubject RewardTimes(BufferSize=nil)

    ExternalizedMapping(RangeMin(DisplayName=StimOffDelayMin), RangeMax(DisplayName=StimOffDelayMax), Count(DisplayName=StimOffDelayCount))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=10, RangeMin=2, RangeMax=1)
    -> ReplaySubject StimOffDelay(BufferSize=nil)

GroupWorkflow BonVision3ScreenRig
    Bonsai.Shaders.CreateWindow
      Width=3840
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=4
        Stereo=true
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-45, Top=45)
    -> PublishSubject Draw
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #6
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=90, Z=0), Translation(X=-10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    #6 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=-90, Z=0), Translation(X=10, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
    -> GroupWorkflow PhotodiodeSquare
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #1
        SubscribeSubject PhotodiodeSquare
        -> DistinctUntilChanged
        -> PropertyMapping(ColorR, ColorG, ColorB) => #4
        #1, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.3
          ExtentY=0.3
          LocationX=1.15
          LocationY=-0.85
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1

        IntProperty(Value=0)
        -> BehaviorSubject PhotodiodeSquare

Disable GroupWorkflow KeyboardControl(Description="Arrow keys for wheel control at desk")
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> FloatProperty(Value=20) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> FloatProperty(Value=-20) => #3
    #1, #3 -> Merge
    -> Multiply(Operand=FloatProperty(Value=0.1))
    -> PublishSubject Wheel

GroupWorkflow InitializeVariables
    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BehaviorSubject<System.Single> TrialITI
    BehaviorSubject<System.Boolean> TrialStart
    BehaviorSubject<System.Boolean> ITIStart
    BehaviorSubject<System.Single> StimOn
    BehaviorSubject<System.Single> Outcome
    BehaviorSubject<System.Single> TrialRewardTime

    FloatProperty(Value=0)
    -> BehaviorSubject StimOpacity

    GroupWorkflow CreateStim
        SubscribeSubject Draw => #0
        SubscribeSubject StimX
        -> PropertyMapping(LocationX) => #2
        SubscribeSubject StimSize
        -> PropertyMapping(ExtentX, ExtentY) => #4
        SubscribeSubject StimSpatialFreq
        -> PropertyMapping(SpatialFrequency) => #6
        BehaviorSubject<System.Single> TrialStimPhase
        -> PropertyMapping(Phase) => #8
        SubscribeSubject StimOpacity
        -> PropertyMapping(Opacity) => #10
        FloatProperty(Value=1)
        -> PropertyMapping(Contrast) => #12
        #0, #2, #4, #6, #8, #10, #12 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-90
          LocationY=0
          Layer=0
          ExtentX=20
          ExtentY=20
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=5500.395
          Angle=0
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=0
          Opacity=0
        -> WorkflowOutput

    Bonsai.Osc.CreateUdpClient(Name=Receiver, Port=30000, RemoteHostName="", RemotePort=0)
    Bonsai.Osc.CreateUdpClient(Name=Emitter, Port=0, RemoteHostName=localhost, RemotePort=20000)
    BehaviorSubject<System.Single> TrialX
    BehaviorSubject<System.Boolean> ManualReward

GroupWorkflow RewardValve
    SubscribeSubject RewardAmount => #0
    Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
      Expression: Convert.ToDouble(it)
    -> PropertyMapping(Value)
    -> FloatProperty(Value=54.17) => #4
    #0, #4 -> CombineLatest
    -> Multiply
    -> PropertyMapping(Value)
    -> IntProperty(Value=325)
    -> BehaviorSubject OpenValve

    GroupWorkflow ManualValve(Description="Press a key to manually open the valve")
        ExternalizedMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown => #1
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control
          SuppressRepetitions=false
        SubscribeSubject OpenValve
        -> PropertyMapping(Value) => #3
        #1, #3 -> IntProperty(Value=325)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString
          Expression: Convert.ToString(it)
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> BooleanProperty(Value=true)
        -> MulticastSubject ManualReward
        -> WorkflowOutput

GroupWorkflow ArduinoInput
    Bonsai.IO.CreateSerialPort
      Name=myArduino
      PortName=COM6
      BaudRate=250000
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=myArduino, NewLine=\n)
    -> Parse(Pattern=%i) => #2
    -> Condition isNonzero => #3
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    Defer deg/ticks => #4
      Description:
        Converts wheel degrees to screen degrees
        ticks: ticks/revolution for model rotary encoder
      Workflow
        FloatProperty(Value=360) => #0
        ExternalizedMapping(Value(DisplayName=Ticks))
        -> FloatProperty(Value=1024) => #2
        #0, #2 -> Zip
        -> Divide => #4
        SubscribeSubject WheelGain => #5
        #4, #5 -> Zip
        -> Multiply
        -> WorkflowOutput
    #3, #4 -> CombineLatest
    -> Multiply
    -> PublishSubject Wheel
    #2 -> Condition isZero
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> PublishSubject LickSpout

GroupWorkflow UpdateTrialNumber
    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> SelectMany FirstTrialDelay(Description="Delay first trial to give time for parameters to initialize")
        WorkflowInput Source1 => #0
        -> Condition IsTrial1
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Delay(DueTime=PT2S) => #2
        #0 -> Condition IsTrial>1 => #3
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #2, #3 -> Merge
        -> WorkflowOutput
    -> MulticastSubject TrialNumber
    -> First => #5
    -> WorkflowOutput
    #5 -> BooleanProperty(Value=true)
    -> MulticastSubject TrialStart
-> SelectMany PickTrialParams
    WorkflowInput Source1
    -> Sink PickTrialITI
        FloatProperty(Value=1) => #0
        SubscribeSubject ITIMeanAdd => #1
        #0, #1 -> Zip
        -> Divide
        -> PropertyMapping(Rate)
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.2)
        -> Bonsai.Numerics.Distributions.Sample => #6
        SubscribeSubject ITIMin => #7
        #6, #7 -> WithLatestFrom
        -> Add => #9
        SubscribeSubject ITIMax => #10
        #9, #10 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject TrialITI
    -> Sink PickTrialStimPhase
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=360)
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject TrialStimPhase
        -> WorkflowOutput
    -> Sink PickTrialX
        SubscribeSubject TrialXSpace
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1)
        -> MulticastSubject TrialX
        -> WorkflowOutput
    -> Sink PickRewardTime
        SubscribeSubject RewardTimes
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1)
        -> MulticastSubject TrialRewardTime
    -> WorkflowOutput
-> SelectMany ITI
    SubscribeSubject TrialITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT19.108S, Period=PT0S) => #3
    WorkflowInput Source1
    -> Sink ITIStartTimestamp => #5
        BooleanProperty(Value=true)
        -> MulticastSubject ITIStart
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput
-> SelectMany StimOn
    SubscribeSubject TrialX => #0
    WorkflowInput Source1 => #1
    #0, #1 -> SubscribeWhen
    -> MulticastSubject StimX
    -> Sink Stim
        IntProperty(Value=1)
        -> MulticastSubject StimOn
        -> MulticastSubject StimOpacity
        -> MulticastSubject PhotodiodeSquare
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Reward
    WorkflowInput Source1 => #0
    SubscribeSubject LickSpout
    -> First => #2
    #0, #2 -> SubscribeWhen
    -> GroupWorkflow IsRewardedTrial
        SubscribeSubject RewardedX => #0
        SubscribeSubject TrialX => #1
        #0, #1 -> Zip
        -> Equal => #3
        WorkflowInput Source1 => #4
        #3, #4 -> SubscribeWhen
        -> WorkflowOutput
    -> Sink OutcomeTimestamp
        WorkflowInput Source1
        -> MulticastSubject Outcome
        -> WorkflowOutput
    -> Sink GiveReward
        SubscribeSubject OpenValve
        -> Bonsai.Scripting.IronPython.PythonTransform MakeString => #1
          Script:
            @returns(str)
            def process(value):
              return str.format("{0}", value)
        WorkflowInput Source1
        -> Condition CheckReward => #3
            WorkflowInput Source1
            -> WorkflowOutput
        #1, #3 -> SubscribeWhen
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> WorkflowOutput
-> SelectMany StimOff
    SubscribeSubject StimOffDelay
    -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Delay(DueTime=PT3S)
    -> Sink StimOff
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StimOn
        -> MulticastSubject StimOpacity
        -> MulticastSubject PhotodiodeSquare
    -> WorkflowOutput
-> GroupWorkflow Repeat
    WorkflowInput Source1
    -> First => #1
    SubscribeSubject NTrials
    -> PropertyMapping(Count) => #3
    #1, #3 -> RepeatCount(Count=200)
    -> WorkflowOutput
-> Last
-> SelectMany EndDelay
    ExternalizedMapping(DueTime)
    -> Timer(DueTime=PT5S, Period=PT0S) => #1
    WorkflowInput Source1 => #2
    #1, #2 -> SubscribeWhen
    -> BooleanProperty(Value=true)
    -> WorkflowOutput
-> GroupWorkflow Stop
    WorkflowInput Source1 => #0
    Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=s, Connection=Receiver)
    -> BooleanProperty(Value=false) => #2
    #0, #2 -> Amb
    -> First
    -> Sink SendStop
        WorkflowInput Source1
        -> StringProperty(Value=stop)
        -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/stop)
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(SavePath)
-> GroupWorkflow Saver
    BehaviorSubject<System.Tuple(System.Int32,System.String,System.String,System.DateTimeOffset)> WriteData
    -> Bonsai.Scripting.Expressions.ExpressionTransform SaveFormat => #1
      Expression:
        new(
        it.Item1 as Trial,
        it.Item2 as Event,
        it.Item3 as Value,
        it.Item4 as Timestamp
        )
    SubscribeSubject CsvFile
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.IO.CsvWriter(FileName=C:\Users\peterslab\Desktop\bonsai_events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

    GroupWorkflow SaveParameters
        SubscribeSubject StimSize
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSize) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject StimSpatialFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimSpatialFreq) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject WheelGain
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=WheelGain) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject RewardAmount
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardAmount) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject StimTime
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimTime) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialXSpace
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialXSpace) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject ITIMeanAdd
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIMean) => #26
        #25, #26 -> WithLatestFrom => #27
        SubscribeSubject ITIMin
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #29
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIMin) => #30
        #29, #30 -> WithLatestFrom => #31
        SubscribeSubject ITIMax
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #33
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIMax) => #34
        #33, #34 -> WithLatestFrom => #35
        SubscribeSubject RewardTimes
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #37
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=RewardTimes) => #38
        #37, #38 -> WithLatestFrom => #39
        #3, #7, #11, #15, #19, #23, #27, #31, #35, #39 -> Merge => #40
        IntProperty(Value=0) => #41
        #40, #41 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    GroupWorkflow SaveVariables
        SubscribeSubject TrialITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #1
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialITI) => #2
        #1, #2 -> WithLatestFrom => #3
        SubscribeSubject StimOn
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #5
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=StimOn) => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #9
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=Outcome) => #10
        #9, #10 -> WithLatestFrom => #11
        SubscribeSubject TrialStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #13
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStart) => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject ITIStart
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #17
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ITIStart) => #18
        #17, #18 -> WithLatestFrom => #19
        SubscribeSubject TrialStimPhase
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #21
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialStimPhase) => #22
        #21, #22 -> WithLatestFrom => #23
        SubscribeSubject ManualReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #25
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=ManualReward) => #26
        #25, #26 -> WithLatestFrom => #27
        SubscribeSubject TrialRewardTime
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #29
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialRewardTime) => #30
        #29, #30 -> WithLatestFrom => #31
        SubscribeSubject TrialX
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #33
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=TrialX) => #34
        #33, #34 -> WithLatestFrom => #35
        SubscribeSubject DummyValve
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeString => #37
          Expression: Convert.ToString(it)
        PropertySource<SubscribeSubject,System.String>(MemberName=Name, Value=DummyValve) => #38
        #37, #38 -> WithLatestFrom => #39
        #3, #7, #11, #15, #19, #23, #27, #31, #35, #39 -> Merge => #40
        SubscribeSubject TrialNumber => #41
        #40, #41 -> WithLatestFrom
        -> Timestamp
        -> MemberSelector(Selector="Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp")
        -> MulticastSubject WriteData

    ExternalizedMapping(SavePath, CsvName, BinName)
    -> GroupWorkflow SaveInfo
        ExternalizedMapping(Value(DisplayName=SavePath))
        -> StringProperty(Value=C:\Users\peterslab\Desktop)
        -> BehaviorSubject SavePath

        SubscribeSubject SavePath => #3
        ExternalizedMapping(Value(DisplayName=CsvName))
        -> StringProperty(Value=bonsai_events.csv) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject CsvFile

        SubscribeSubject SavePath => #9
        ExternalizedMapping(Value(DisplayName=BinName))
        -> StringProperty(Value=NoiseLocations.bin) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import os

            @returns(str)
            def process(value):
              return os.path.join(value.Item1,value.Item2)
        -> BehaviorSubject BinFile

GroupWorkflow TotalWater(Description="Cumulative water given during task (just for human readout)")
    SubscribeSubject Outcome
    -> Accumulate => #1
    SubscribeSubject RewardAmount => #2
    #1, #2 -> WithLatestFrom
    -> Multiply
    -> WorkflowOutput

GroupWorkflow DummyValve(Description="Dummy Valve workflow")
    ExternalizedMapping(Value(DisplayName=DummyValveMaxITI))
    -> DoubleProperty(Value=10)
    -> BehaviorSubject DummyValveMaxITI

    ExternalizedMapping(Value(DisplayName=DummyValveMeanAdd))
    -> DoubleProperty(Value=2.5)
    -> BehaviorSubject DummyValveMeanAdd

    ExternalizedMapping(Value(DisplayName=DummyValveMinITI))
    -> DoubleProperty(Value=1)
    -> BehaviorSubject DummyValveMinITI

    BehaviorSubject<System.Double> DummyValveITI
    BehaviorSubject<System.Boolean> DummyValve

    GroupWorkflow SetDummyValveITI
        FloatProperty(Value=1) => #0
        SubscribeSubject DummyValveITI => #1
        #0, #1 -> Zip
        -> Divide
        -> PropertyMapping(Rate)
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.27868309097766608)
        -> Bonsai.Numerics.Distributions.Sample => #6
        SubscribeSubject DummyValveMinITI => #7
        #6, #7 -> WithLatestFrom
        -> Add => #9
        SubscribeSubject DummyValveMaxITI => #10
        #9, #10 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject DummyValveITI
        -> WorkflowOutput
    -> SelectMany DummyValveITI
        BehaviorSubject<System.Double> DummyValveITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeTimespan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT6.581S, Period=PT0S) => #3
        WorkflowInput Source1 => #4
        #3, #4 -> SubscribeWhen
        -> WorkflowOutput
    -> SelectMany OpenDummyValve
        WorkflowInput Source1
        -> Bonsai.IO.CsvReader(FileName=C:\Water_calibration\calibration.csv, SkipRows=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform MakeDouble
          Expression: Convert.ToDouble(it)
        -> PropertyMapping(Value)
        -> FloatProperty(Value=54.17) => #4
        SubscribeSubject RewardAmount => #5
        #4, #5 -> CombineLatest
        -> Multiply
        -> PropertyMapping(Value)
        -> IntProperty(Value=325)
        -> Multiply(Operand=IntProperty(Value=-1))
        -> Bonsai.IO.SerialStringWrite(PortName=myArduino, NewLine=\r)
        -> WorkflowOutput
    -> First
    -> Sink DummyValveTimeStamp
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject DummyValve
    -> Repeat
