<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelGain</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardAmount" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ITIMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITIMin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ITIMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>7</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITIMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimOffMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOffMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimOffMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOffMin</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1024</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.15</LocationX>
                    <LocationY>-0.85</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>KeyboardControl</Name>
          <Description>Arrow keys for wheel control at desk</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialITI</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>TrialStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>ITIStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimOn</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Outcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialStimOffDelay</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOpacity</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CreateStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" />
                      <Property Name="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSpatialFreq</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>TrialStimPhase</rx:Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Phase" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>90</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>0.1</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>8651.663</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>0</Opacity>
                    <ExtentX>20</ExtentX>
                    <ExtentY>20</ExtentY>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="13" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source4" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="13" Label="Source5" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source6" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source7" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>ManualReward</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ArduinoInput</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>myArduino</io:Name>
                <io:PortName>COM6</io:PortName>
                <io:BaudRate>250000</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>myArduino</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isNonzero</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>deg/ticks</Name>
              <Description>Converts wheel degrees to screen degrees
ticks: ticks/revolution for model rotary encoder</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>360</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Ticks" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1024</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelGain</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Wheel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isZero</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickSpout</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>FirstTrialDelay</Name>
              <Description>Delay first trial to give time for parameters to initialize</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial&gt;1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialStart</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>PickTrialParams</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>4</p1:Lower>
                      <p1:Upper>7</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialStimPhase</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>360</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialStimPhase</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickStimOffTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>1</p1:Lower>
                      <p1:Upper>2</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialStimOffDelay</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialITI</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT4.037S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ITIStartTimestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ITIStart</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>Stim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LickSpout</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>OutcomeTimestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Outcome</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>GiveReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OpenValve</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>MakeString</ipy:Name>
                    <ipy:Script>@returns(str)
def process(value):
  return str.format("{0}", value)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:SerialStringWrite">
                      <io:PortName>myArduino</io:PortName>
                      <io:NewLine>\r</io:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialStimOffDelay</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1.987S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>StimOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Repeat</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SendStop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>stop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>Emitter</osc:Connection>
                    <osc:Address>/stop</osc:Address>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SavePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:String,sys:String,sys:DateTimeOffset)">
              <rx:Name>WriteData</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SaveFormat</scr:Name>
              <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\peterslab\Desktop\bonsai_events.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSize</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSpatialFreq</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSpatialFreq</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelGain</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>WheelGain</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardAmount</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>RewardAmount</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMin</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITIMin</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMax</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITIMax</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMax</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOffMax</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMin</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOffMin</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="33" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="33" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="33" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="33" Label="Source4" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="33" Label="Source5" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="33" Label="Source6" />
                  <Edge From="24" To="34" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="28" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="33" Label="Source7" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="32" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source8" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveVariables</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialITI</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOn</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Outcome</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>Outcome</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialStart</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialStart</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIStart</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITIStart</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialStimPhase</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialStimPhase</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManualReward</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ManualReward</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialStimOffDelay</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialStimOffDelay</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="33" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="33" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="33" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="33" Label="Source4" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="33" Label="Source5" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="33" Label="Source6" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="27" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="33" Label="Source7" />
                  <Edge From="28" To="34" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="32" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source8" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" />
              <Property Name="CsvName" />
              <Property Name="BinName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveInfo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SavePath" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\Users\peterslab\Desktop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="CsvName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>bonsai_events.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CsvFile</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SavePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BinName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NoiseLocations.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>BinFile</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TotalWater</Name>
        <Description>Cumulative water given during task (just for human readout)</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Outcome</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardValve</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Water_calibration\calibration.csv</io:FileName>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeDouble</scr:Name>
              <scr:Description />
              <scr:Expression>Convert.ToDouble(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>54.17</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>325</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OpenValve</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ManualValve</Name>
              <Description>Press a key to manually open the valve</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Filter" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift Control</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OpenValve</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>325</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Description />
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:SerialStringWrite">
                      <io:PortName>myArduino</io:PortName>
                      <io:NewLine>\r</io:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ManualReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>