<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelGain</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RewardAmount" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ITIMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITIMin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ITIMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITIMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimOffMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOffMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimOffMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOffMin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InteractiveDelayMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>InteractiveDelayMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InteractiveDelayMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>InteractiveDelayMin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RangeMin" DisplayName="QuiescenceMin" />
              <Property Name="RangeMax" DisplayName="QuiescenceMax" />
              <Property Name="Count" DisplayName="#QuiescenceVals" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>16</Count>
              <RangeMin>0.5</RangeMin>
              <RangeMax>0.5</RangeMax>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>QuiescenceTimes</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimStaticMin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimStaticMin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimStaticMax" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimStaticMax</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimMoveTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimMoveTime</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1024</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Maximized</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <FaceSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.15</LocationX>
                    <LocationY>-0.85</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>KeyboardControl</Name>
          <Description>Arrow keys for wheel control at desk</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialITI</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>TrialStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>ITIStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimOn</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Outcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialStimOffDelay</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimOpacity</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialStimStaticTime</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CreateStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>StimX</rx:Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" />
                      <Property Name="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSpatialFreq</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
                    <rx:Name>TrialStimPhase</rx:Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Phase" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>-8.214606</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>20</ExtentX>
                    <ExtentY>20</ExtentY>
                    <SpatialFrequency>0.1</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>10657.0146</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>0</Opacity>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="13" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="13" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source5" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source6" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source7" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>ManualReward</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialInteractiveDelay</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>InteractiveStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialQuiescence</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>QuiescenceReset</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>QuiescenceStart</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ArduinoInput</Name>
          <Description />
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>UpdateTrialNumber</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>PickTrialParams</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>ITI</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>QuiescenceTimer</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>StimOn</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>InteractiveDelay</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Reward</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>StimOff</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Repeat</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>EndDelay</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Stop</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Reward</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Saver</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TotalWater</Name>
        <Description>Cumulative water given during task (just for human readout)</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Outcome</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>RewardValve</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>FirstTrialDelay</Name>
              <Description>Delay first trial to give time for parameters to initialize</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial&gt;1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialStart</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>PickTrialParams</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0.2</p1:Lower>
                      <p1:Upper>0.5</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialInteractiveDelay</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InteractiveDelayMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InteractiveDelayMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0.2</p1:Lower>
                      <p1:Upper>0.5</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialInteractiveDelay</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialStimPhase</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>360</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialStimPhase</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickStimOffTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOffMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>0.2</p1:Lower>
                      <p1:Upper>0.5</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialStimOffDelay</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickTrialQuiescence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PickTrialQuiescence</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>QuiescenceTimes</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:Permutation" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialQuiescence</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PickStimStaticTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimStaticMin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimStaticMax</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>1</p1:Lower>
                      <p1:Upper>1</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialStimStaticTime</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialITI</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.438S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ITIStartTimestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ITIStart</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>QuiescenceTimer</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>Stim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StimDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialStimStaticTime</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimMovement</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>StimX</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Equal">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>StimMoveTimeSeries</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeRes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeTimespan</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimeInterval" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Interval.TotalSeconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimMoveTime</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>-90</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>90</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StimMovement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimMoveTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Name>MakeTimespan</scr:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>StimMoveTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Name>MakeTimespan</scr:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Subtract" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimeRes</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="24" To="28" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="30" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Reward</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialStimOffDelay</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.242S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>StimOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOpacity</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Repeat</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SendStop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>stop</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>Emitter</osc:Connection>
                    <osc:Address>/stop</osc:Address>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>