<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand1</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand2</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
<Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InitDelay</Name>
              <Description>Delay when trial 0 initialized to give all other init processes time</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsTrial&gt;0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>stop</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>Emitter</osc:Connection>
              <osc:Address>/stop</osc:Address>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CsvName</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\peterslab\Documents\MissMouse0801\test.csv</io:FileName>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SavePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SaveInfo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SavePath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\peterslab\Documents\MissMouse0801</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SavePath</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CsvFile" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SavePath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CsvFile</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CsvName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BinFile" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BinFile</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SavePath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinFile</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>import os

@returns(str)
def process(value):
  return os.path.join(value.Item1,value.Item2)
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BinName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
