<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it % 2</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SyncState</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileNameRFMapStim" />
        <Property Name="Rate" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualNoiseStimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DegreesVisualAngle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Rows" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>36</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>8</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicTexture</TextureName>
              <ExtentX>120</ExtentX>
              <ExtentY>120</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="GridSize" Selector="it,it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameRFMapStim" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Rate" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SparseNoise</Name>
              <Description>Generates and draws a non-overlapping discrete sparse grid of randomly activated quads.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStep.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Duration" />
                    <Property Name="Rate" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="GridSize" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:ConvertFromArray,p1:Size">
                    <MemberName>Size</MemberName>
                    <Value>
                      <Width>15</Width>
                      <Height>15</Height>
                    </Value>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Size" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:ConvertFromArray,p1:Size">
                    <MemberName>Size</MemberName>
                    <Value>
                      <Width>15</Width>
                      <Height>15</Height>
                    </Value>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rows" Selector="Height" />
                      <Property Name="Columns" Selector="Width" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:SparseNoiseGenerator">
                      <p2:Rows>15</p2:Rows>
                      <p2:Columns>15</p2:Columns>
                      <p2:Duration>0.2</p2:Duration>
                      <p2:Rate>0.1</p2:Rate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertFromArray">
                      <dsp:Size>
                        <dsp:Width>15</dsp:Width>
                        <dsp:Height>15</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="9" Label="Source4" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>NoiseLocations.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>true</dsp:Overwrite>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertToImage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicTexture</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Step</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="12" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="EndDelay" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="InitDelay" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="MappingTime" Description="!!! includes init delay" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT20S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="13" Label="Source2" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>